PsychoPy2experiment version="2022.2.1"
Settings
  Data filename = f'data/calibration/FPS/{expInfo["date"]}'
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1440, 900]
  expName = FPS_calibration
  keyboardBackend = ioHub
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Routines
  Routine FPS_sound
    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [condition] = $flag == 0
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    CodeComponent FPS
      Code Type = Py
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      Begin Routine:
        flag = 0
        mySound = sound.Sound('stimuli/calibrationprobe1.wav', stereo=True, hamming=False, name='mySound')
        mySound.play()
      End Routine:
        flag = 1
  Routine iti
    PolygonComponent cross_iti
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
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  Routine inst0_FPS
    TextComponent inst0
      letterHeight = 0.05
      startVal [time (s)] = 0
      text = You will be hearing loud static noises through the headphones. These loud noises are brief and similar in volume to things you come across in your daily life, like a car honking its horn or an airplane flying over head. 
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    KeyboardComponent inst0_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine inst1_FPS
    TextComponent inst1
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0
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      text:
        You will hear 3 bursts of white noise.
        All you need to do is listen to the noises, nothing else.

        Do you have any questions?
    KeyboardComponent inst1_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine getready
    TextComponent inst_final
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        Are you ready?

        Press spacebar to START...
    KeyboardComponent final_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cross_2
    PolygonComponent cross_3
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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Flow
  Routine inst0_FPS
  Routine inst1_FPS
  Routine getready
  Routine cross_2
  LoopInitiator FPS_trials loopType="TrialHandler"
    conditionsFile = $f'data/fps_order.xlsx'
    loopType = sequential
    nReps = 1
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    Routine FPS_sound
    Routine iti
  LoopTerminator FPS_trials
