PsychoPy2experiment version="2022.2.1"
Settings
  Audio lib = ptb
  Data filename = f'data/{bidsID}/{bidsID}_ses-1_task-{expName}_{expInfo["date"]}'
  Experiment info = {'': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = conditioning
  keyboardBackend = ioHub
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Routines
  Routine setup
    CodeComponent setup_code
      Code Type = Py
      Before Experiment:
        # from psychopy.sound import Sound
        from psychopy.parallel import ParallelPort
        import serial
        from subprocess import Popen
        import time
        from psychopy import prefs
        from FAB_preferences import *
        import psychtoolbox as ptb

        prefs.general['audioLib'] = ['PTB']
        from psychopy import sound, core
        print(sound.audioLib)


        '''setup exp parameters'''
        expName = 'FAB'
        expInfo = {'participant': ''}
        study_prefix= "FB"

        '''setup user input GUI'''
        dlg = gui.Dlg(title='Init participant')
        dlg.addField('participant', choices = [int(i.split(f'sub-{study_prefix}')[-1]) for i in os.listdir('data') if f'sub-{study_prefix}' in i])
        dlg.addField('Init port?', choices=['yes','no (testing parallel)','no (testing serial)'])
        dlg.addField('room/port', choices =[port_label_1, port_label_2])

        user_input = dlg.show()

        if dlg.OK == False:
            core.quit()  # user pressed cancel

        '''setup variables based on input'''
        expInfo = {'participant':user_input[0]}
        bidsID = f'sub-{study_prefix}'+'{0:0=3d}'.format(int(expInfo['participant']))#provided from itec_preferences.py

        '''port setup'''
        port_type = ''
        BIO = True if user_input[1] == 'yes' and user_input[2] == port_label_1 else False
        BIO2 = True if user_input[1] == 'yes' and user_input[2] == port_label_2 else False

        if BIO == True:
            if port_type_1 == 'P':
                port = ParallelPort(address=port_address_1)
                port_type = "parallel"
            elif port_type_1 == 'S':
                port = serial.Serial(port_address_1)
                port_type = "serial"
        elif BIO2 == True:
            if port_type_2 == 'P':
                port = ParallelPort(address=port_address_2)
                port_type = "parallel"
            elif port_type_2 == 'S':
                port = serial.Serial(port_address_2)
                port_type = "serial"
        else:
            if user_input[1] == 'no (testing parallel)':
                port_type = "parallel"
                class PortEmulator(object):
                    def __init__(self, address=None):
                        pass
                    def setData(self, data=None):
                        logging.warn("Sent data to non-existent pPort:{}".format(data))
                    def setPin(self, pin, data):
                        logging.warn(f"Sent data to non-existent pPort pin: {pin}, {data}")
            elif user_input[1] == 'no (testing serial)': #untested
                port_type = "serial"
                class PortEmulator(object):
                    def __init__(self, address=None):
                        pass
                    def flush(self):
                        logging.warn(f"flushed non-existent sPort")
                    def write(self,data):
                        logging.warn(f"Sent data to non-existent sPort: {data}")

            port = PortEmulator()

        if port_type == "parallel":
            port.setData(0) #reset the pins

            def shock():
                port.setPin(shock_code,1) #1 corresponds to pin ON
                time.sleep(shock_duration)
                port.setPin(shock_code,0) #0 corresponds to pin OFF

            def stim_marker(on_or_offset='',SHOCK=False):
                if SHOCK:
                    shock()
                if 'on' in on_or_offset:
                    port.setPin(stimulus_code,1)
                elif 'off' in on_or_offset:
                    port.setPin(stimulus_code,0)

            def FPS_marker():
                port.setPin(FPS_code,1)
                time.sleep(FPS_duration)
                port.setPin(FPS_code,0)

        #### HAS NOT BEEN TESTED ####
        #### assumes BIOPAC/etc can read integer and port.write() will correctly send, otherwise might need to use some combination of port.print() and byte(code)
        if port_type == "serial":
            port.flush()
            def shock():
                port.write(int(shock_code))
                time.sleep(shock_duration)
                port.write(int(0))

            def stim_marker(on_or_offset='',SHOCK=False):
                if SHOCK:
                    shock()
                if 'on' in on_or_offset:
                    port.write(int(stimulus_code))
                elif 'off' in on_or_offset:
                    port.write(int(0))
      Begin Experiment:
        trialClock = core.Clock()
      End Experiment:
        if port_type == "serial":
            port.close()
    CodeComponent functions
      Code Type = Py
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      Before Experiment:
        def dragOnly():
            click = bool(slider0.mouse.getPressed()[0])
            xy = slider0.mouse.getPos()

            if click:
                # Update current but don't set Rating (mouse is still down)
                # Dragging has to start inside a "valid" area (i.e., on the
                # slider), but may continue even if the mouse moves away from
                # the slider, as long as the mouse button is not released.
                if (slider0.validArea.contains(slider0.mouse, units=slider0.units) and slider0.markerPos is None):
                    slider0.markerPos = slider0._posToRating(xy)  # updates marker
                    slider0._dragging = True
                elif (slider0.marker.contains(slider0.mouse, units=slider0.units) or
                        slider0._dragging):
                    slider0.markerPos = slider0._posToRating(xy)  # updates marker
                    slider0._dragging = True
            else:  # mouse is up - check if it *just* came up
                if slider0._dragging:
                    slider0._dragging = False
                    if slider0.markerPos is not None:
                        slider0.recordRating(slider0.markerPos)
                    return slider0.markerPos
                else:
                    # is up and was already up - move along
                    return None
            slider0._mouseStateXY = xy


        slider_width = 1
        slider_height = .03
        slider_orientation = 0
        slider_ticks=[0, 100]


        # Create a slider_shape in this routine with the same size as the slider
        # Check if mouse is moving within slider_shape, if so change marker position accordingly
        # this function is executed each frame, defines mouse location for that frame and record the location as final location
        def getmarker(mouse_d, first, mouseRec, slider_shaped, slider_rt, exp_rating, marker_position, exp_rating_all, exp_rt_all):
            # if the mouse has never hit the square
            # if it's the first time, return rt and rating as 999
            if first == 1:
                mouse_x = mouse_d.getPos()[0]
                mouse_y = mouse_d.getPos()[1]
            # if mouse3 moved to the area of the marker, starts moving by setting first to 0
                if mouse_x <= 0.035 and mouse_x >= -0.035 and mouse_y <= -0.335 and mouse_y >= -0.365:
                    first = 0
            # record the time when mouse hit the square
                    thisExp.addData('marker_hit', t)
             # if in this frame, doesn't hit marker, quit the function,nothing happens
            # if already hit the marker
            if first == 0:
                # if the mouse position is not the same as the last one
                # if the shape contains the mouse
                if slider_shaped.contains(mouse_d) and mouse_d.getPos()[0] != mouseRec[0]:
                    # update mouse location and marker position
                    mouseRec = mouse_d.getPos()
                    marker_position = (mouseRec[0], -0.35)
                    exp_rating = mouseRec[0]/slider_width*(slider_ticks[-1]-slider_ticks[0])+(slider_ticks[0]+slider_ticks[-1])/2
                    exp_rating = round(exp_rating, 1)
                    slider_rt = t
                    exp_rating_all.append(exp_rating)
                    exp_rt_all.append(slider_rt)
            return marker_position, mouseRec, first, slider_rt, exp_rating, exp_rating_all, exp_rt_all
  Routine inst_acq1
    TextComponent inst1
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        You will see four pictures of fractal patterns. These will appear in the center of the screen for a few seconds.

        Some pictures will be followed by a loud white noise, and others will not.
    KeyboardComponent inst1_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine inst_acq2
    TextComponent inst2
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        We will be measuring your level of sweating from sensors on your left hand.

        These are sensitive to movement and posture, so please sit up straight and do not shift around during the experiment.
    KeyboardComponent inst2_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine inst_acq4
    TextComponent inst4
      letterHeight = 0.04
      startVal [time (s)] = 0
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      text:
        PLEASE MAKE A RATING ON EVERY TRIAL.
        We are measuring how fast you respond, and you only need to give your rating when a picture is onscreen.

        Please note: Your ratings do NOT influence whether you will hear a noise or not during the experiment. In other words, you cannot trigger or prevent the noise with your answers.
    KeyboardComponent inst4_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine inst_acq5
    TextComponent inst5
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        Please keep your eyes open and watch the screen the whole time. Pay attention to learn the relationship between the noise and what's on the screen.

        Also make sure you make a rating for every image using the cursor onscreen.

        Are you ready?
    KeyboardComponent inst5_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine inst_slider
    TextComponent inst3
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0
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      text:
        On each trial, you will rate how much you expect to hear a noise.
        Your job is to rate from 0 to 100 how much likely you will hear a noise by moving the button on a rating bar with your mouse. The button will always show up in the middle of the bar. You will need to move it to the left or right side.

        At first you will just be guessing. Over time you may become more accurate in your prediction for whether or not you will hear a nosie at the end of a picture.
    KeyboardComponent inst3_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SliderComponent slider_demo
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 1
      initVal = 50
      labels = ("no shock", "shock")
      letterHeight = 0.04
      pos = (0, -0.35)
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (0, 100)
      units = height
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    CodeComponent code_demo
      Code Type = Py
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      Begin Routine:
        slider_demo.marker.size=(0.03, 0.07)
        if slider_granularity == 0:
            slider_granularity = .1

        # initiate old rating as 50
        oldRating = 50

        # set start position of the slider to end position of the previous trial
        slider_demo.markerPos = oldRating

        # record the current position of the mouse
        mouseRec=mouse.getPos()
      Each Frame:
        # Create a slider_shape in this routine with the same size as the slider
        # Check if mouse is moving within slider_shape, if so change marker position accordingly
        if slider_shape.contains(mouse) and mouse.getPos()[slider_orientation] != mouseRec[slider_orientation]:
            mouseRec = mouse.getPos()
            slider_demo.markerPos = mouseRec[slider_orientation]/slider_width*(slider_ticks[-1]-slider_ticks[0])+(slider_ticks[0]+slider_ticks[-1])/2

        # update oldRatings if
        if slider_demo.markerPos:
             if oldRating != slider_demo.markerPos:
                oldRating = slider_demo.markerPos
                slider_demo.rt = t
                slider_rt = t
  Routine inst_acq3
    TextComponent inst1_2
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        This is a learning experiment. If you pay attention to the pictures, then you can learn the association between the pictures and the noise.

        In other words, you will learn to predict when the noise will occur or won't occur, based on the types of picture that you see.
    KeyboardComponent inst1_response_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sliderdemo
    CodeComponent code_demo_2
      Code Type = Py
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      Begin Routine:
        # initiate old rating as 50
        oldRating = 50

        # set start position of the slider to end position of the previous trial
        marker_position = (0,-0.35)

        # record the current position of the mouse
        mouseRec=mouse_cond.getPos()
        first = 1
        slider_rt = 999
        exp_rating = 999
        exp_rating_all = list()
        exp_rt_all = list()
      Each Frame:
        #mouse_d, first, mouseRec, slider_shaped
        # first = 0 or 1, mouseRec as updated rating, mouse0 as initial location,slidershape as where the slider is
        marker_position, mouseRec, first, slider_rt, exp_rating, exp_rating_all, exp_rt_all = getmarker(mouse_cond, first, mouseRec, shape_cond, slider_rt, exp_rating, marker_position, exp_rating_all, exp_rt_all)
    TextComponent sliderright
      letterHeight = 0.04
      pos = (0.45, -0.4)
      startVal [time (s)] = 0.0
      text = noise (100%)
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    TextComponent sliderleft
      letterHeight = 0.04
      pos = (-0.45, -0.4)
      startVal [time (s)] = 0.0
      text = no noise (0%)
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    TextComponent instdemo
      letterHeight = 0.045
      pos = (0, -0.06)
      startVal [time (s)] = 0
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      text:
        On each trial, you will rate from 0% to 100% how likely it is that you will hear a noise by moving the cursor on the rating bar with your mouse. The cursor will always show up in the middle of the bar. You will need to move it to the left or the right side.

        You can leave the cursor anywhere on the scale depending on how certain you are.
    PolygonComponent shape_demo
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0, -0.35)
      shape = rectangle
      size = (1, 0.07)
      startVal [time (s)] = 0.0
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    SliderComponent slider0l_d
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      letterHeight = 0.04
      pos = (-0.275, -0.35)
      readOnly = True
      size = (0.45, 0.03)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = slider
      ticks = (0,50)
      units = height
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    TextComponent expect0_d
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        How much do you expect a noise?
    SliderComponent slider0r_d
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      letterHeight = 0.04
      pos = (0.275, -0.35)
      readOnly = True
      size = (0.45, 0.03)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = slider
      ticks = (50,100)
      units = height
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    PolygonComponent markerdemo
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos [set every frame] = marker_position
      shape = rectangle
      size = (0.03, 0.07)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_d
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
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    KeyboardComponent resp_demo
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine conditioning
    CodeComponent code_cond
      Code Type = Py
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      Begin Routine:
        #send the event code
        stim_marker('onset',SHOCK=False)
        thisExp.timestampOnFlip(win, 'stim_onset')

        # initiate old rating as 50
        oldRating = 50

        # set start position of the slider to end position of the previous trial
        marker_position = (0,-0.35)

        # record the current position of the mouse
        mouseRec=mouse_cond.getPos()
        first = 1
        slider_rt = 999
        exp_rating = 999
        exp_rating_all = list()
        exp_rt_all = list()
      Each Frame:
        #mouse_d, first, mouseRec, slider_shaped
        # first = 0 or 1, mouseRec as updated rating, mouse0 as initial location,slidershape as where the slider is
        marker_position, mouseRec, first, slider_rt, exp_rating, exp_rating_all, exp_rt_all = getmarker(mouse_cond, first, mouseRec, shape_cond, slider_rt, exp_rating, marker_position, exp_rating_all, exp_rt_all)
      End Routine:
        stim_marker('offset',SHOCK=bool(int(us))) #deliver shock if need be
        #save the offset time
        thisExp.addData('CS_duration', t)

        # thisExp.addData('routineTiming', routineTimer.getTime())
        if exp_rating != 999:
            thisExp.addData('exp_rating_final', exp_rating)

        # will throw an error if subject didn't move
        if slider_rt != 999:
            thisExp.addData('exp_rt_final', slider_rt)


        thisExp.addData('exp_rating_all', exp_rating_all)
        thisExp.addData('exp_rt_all', exp_rt_all)
    TextComponent textr_cond
      letterHeight = 0.04
      pos = (0.45, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = noise (100%)
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    ImageComponent img_cond
      image [set every repeat] = $path
      pos [set every repeat] = location
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent textl_cond
      letterHeight = 0.04
      pos = (-0.45, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = no noise (0%)
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    PolygonComponent shape_cond
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0, -0.35)
      shape = rectangle
      size = (1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    SliderComponent sliderl_cond
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      letterHeight = 0.04
      pos = (-0.275, -0.35)
      readOnly = True
      size = (0.45, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      storeRating = False
      storeRatingTime = False
      styles = slider
      ticks = (0,50)
      units = height
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    TextComponent expect_cond
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        How much do you expect a noise?
    SliderComponent sliderr_cond
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      letterHeight = 0.04
      pos = (0.275, -0.35)
      readOnly = True
      size = (0.45, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      storeRating = False
      storeRatingTime = False
      styles = slider
      ticks = (50,100)
      units = height
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    PolygonComponent marker_cond
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos [set every frame] = marker_position
      shape = rectangle
      size = (0.03, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MouseComponent mouse_cond
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent FPS_control
      Code Type = Py
      Begin Routine:
        # create sound if FPS == 1
        # preschedule sound object
        flag = 0
        if FPS == 1:
            now = ptb.GetSecs()
            mySound = sound.Sound('stimuli/calibrationprobe1.wav', stereo=True, hamming=False, name='mySound')
            mySound.setVolume(1)
            FPSstart = now+FPS_timing
            thisExp.addData('FPSstart', routineTimer.getTime())
            mySound.play(when=FPSstart)
      Each Frame:
        if FPS == 1:
            if flag == 0 and ptb.GetSecs() >= FPSstart:
                FPS_marker()
                thisExp.addData('FPStrigger', routineTimer.getTime())
                flag = 1
  Routine breaktime
    TextComponent inst_break
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        Take a break!
    KeyboardComponent inst1_response_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine iti
    CodeComponent iti_code_2
      Code Type = Py
      Begin Routine:
        thisExp.addData('iti_begin_cond', routineTimer.getTime())
      End Routine:
        thisExp.addData('iti_duration', routineTimer.getTime())
    PolygonComponent cross_2
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
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  Routine fixation_cross
    PolygonComponent cross_start
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent reset_clock
      Code Type = Py
      End Routine:
        globalClock.reset()
Flow
  Routine setup
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine inst_acq1
    Routine inst_acq2
    Routine inst_acq3
    Routine sliderdemo
    Routine inst_acq4
    Routine inst_acq5
  LoopTerminator trials
  Routine fixation_cross
  LoopInitiator conditioning_trials loopType="TrialHandler"
    conditionsFile = $f"data/{bidsID}/{bidsID}_ses-1_task-conditioning_events-input.xlsx"
    loopType = sequential
    nReps = 1
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    Routine conditioning
    Routine iti
  LoopTerminator conditioning_trials
  Routine breaktime
