PsychoPy2experiment version="2022.2.1"
Settings
  Audio lib = ptb
  Data filename = f'data/{bidsID}/{bidsID}_ses-1_task-{expName}_{expInfo["date"]}'
  Experiment info = {'': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = compound
  keyboardBackend = ioHub
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Routines
  Routine setup
    CodeComponent setup_code
      Code Type = Py
      Before Experiment:
        # from psychopy.sound import Sound
        from psychopy.parallel import ParallelPort
        import serial
        from subprocess import Popen
        import time
        from psychopy import prefs
        from FAB_preferences import *
        import psychtoolbox as ptb
        prefs.general['audioLib'] = ['PTB']
        from psychopy import sound, core
        print(sound.audioLib)


        '''setup exp parameters'''
        expName = 'FAB'
        expInfo = {'participant': ''}
        study_prefix='FB'

        '''setup user input GUI'''
        dlg = gui.Dlg(title='Init participant')
        dlg.addField('participant', choices = [int(i.split(f'sub-{study_prefix}')[-1]) for i in os.listdir('data') if f'sub-{study_prefix}' in i])
        dlg.addField('Init port?', choices=['yes','no (testing parallel)','no (testing serial)'])
        dlg.addField('room/port', choices =[port_label_1, port_label_2])

        user_input = dlg.show()

        if dlg.OK == False:
            core.quit()  # user pressed cancel

        '''setup variables based on input'''
        expInfo = {'participant':user_input[0]}
        bidsID = f'sub-{study_prefix}'+'{0:0=3d}'.format(int(expInfo['participant']))#provided from itec_preferences.py

        '''port setup'''
        port_type = ''
        BIO = True if user_input[1] == 'yes' and user_input[2] == port_label_1 else False
        BIO2 = True if user_input[1] == 'yes' and user_input[2] == port_label_2 else False

        if BIO == True:
            if port_type_1 == 'P':
                port = ParallelPort(address=port_address_1)
                port_type = "parallel"
            elif port_type_1 == 'S':
                port = serial.Serial(port_address_1)
                port_type = "serial"
        elif BIO2 == True:
            if port_type_2 == 'P':
                port = ParallelPort(address=port_address_2)
                port_type = "parallel"
            elif port_type_2 == 'S':
                port = serial.Serial(port_address_2)
                port_type = "serial"
        else:
            if user_input[1] == 'no (testing parallel)':
                port_type = "parallel"
                class PortEmulator(object):
                    def __init__(self, address=None):
                        pass
                    def setData(self, data=None):
                        logging.warn("Sent data to non-existent pPort:{}".format(data))
                    def setPin(self, pin, data):
                        logging.warn(f"Sent data to non-existent pPort pin: {pin}, {data}")
            elif user_input[1] == 'no (testing serial)': #untested
                port_type = "serial"
                class PortEmulator(object):
                    def __init__(self, address=None):
                        pass
                    def flush(self):
                        logging.warn(f"flushed non-existent sPort")
                    def write(self,data):
                        logging.warn(f"Sent data to non-existent sPort: {data}")

            port = PortEmulator()

        if port_type == "parallel":
            port.setData(0) #reset the pins

            def shock():
                port.setPin(shock_code,1) #1 corresponds to pin ON
                time.sleep(shock_duration)
                port.setPin(shock_code,0) #0 corresponds to pin OFF

            def stim_marker(on_or_offset='',SHOCK=False):
                if SHOCK:
                    shock()
                if 'on' in on_or_offset:
                    port.setPin(stimulus_code,1)
                elif 'off' in on_or_offset:
                    port.setPin(stimulus_code,0)

            def FPS_marker():
                port.setPin(FPS_code,1)
                time.sleep(FPS_duration)
                port.setPin(FPS_code,0)

            def FPS_marker_control(on_or_offset=''):
                if 'on' in on_or_offset:
                    port.setPin(FPS_code,1)
                elif 'off' in on_or_offset:
                    port.setPin(FPS_code,0)

        #### HAS NOT BEEN TESTED ####
        #### assumes BIOPAC/etc can read integer and port.write() will correctly send, otherwise might need to use some combination of port.print() and byte(code)
        if port_type == "serial":
            port.flush()
            def shock():
                port.write(int(shock_code))
                time.sleep(shock_duration)
                port.write(int(0))

            def stim_marker(on_or_offset='',SHOCK=False):
                if SHOCK:
                    shock()
                if 'on' in on_or_offset:
                    port.write(int(stimulus_code))
                elif 'off' in on_or_offset:
                    port.write(int(0))
      Begin Experiment:
        trialClock = core.Clock()
      End Experiment:
        if port_type == "serial":
            port.close()
    CodeComponent functions
      Code Type = Py
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      Before Experiment:
        def dragOnly():
            click = bool(slider0.mouse.getPressed()[0])
            xy = slider0.mouse.getPos()

            if click:
                # Update current but don't set Rating (mouse is still down)
                # Dragging has to start inside a "valid" area (i.e., on the
                # slider), but may continue even if the mouse moves away from
                # the slider, as long as the mouse button is not released.
                if (slider0.validArea.contains(slider0.mouse, units=slider0.units) and slider0.markerPos is None):
                    slider0.markerPos = slider0._posToRating(xy)  # updates marker
                    slider0._dragging = True
                elif (slider0.marker.contains(slider0.mouse, units=slider0.units) or
                        slider0._dragging):
                    slider0.markerPos = slider0._posToRating(xy)  # updates marker
                    slider0._dragging = True
            else:  # mouse is up - check if it *just* came up
                if slider0._dragging:
                    slider0._dragging = False
                    if slider0.markerPos is not None:
                        slider0.recordRating(slider0.markerPos)
                    return slider0.markerPos
                else:
                    # is up and was already up - move along
                    return None
            slider0._mouseStateXY = xy

        slideSpeed = 1
        slider_granularity = .1
        slider_decimals = 1
        slider_width = 1
        slider_height = .03
        slider_orientation = 0
        slider_ticks=[0, 100]
        slider_labels=['no shock','shock']

        # Create a slider_shape in this routine with the same size as the slider
        # Check if mouse is moving within slider_shape, if so change marker position accordingly
        # this function is executed each frame, defines mouse location for that frame and record the location as final location
        def getmarker(mouse_d, first, mouseRec, slider_shaped, slider_rt, exp_rating, marker_position, exp_rating_all, exp_rt_all):
            # if the mouse has never hit the square
            # if it's the first time, return rt and rating as 999
            if first == 1:
                mouse_x = mouse_d.getPos()[0]
                mouse_y = mouse_d.getPos()[1]
            # if mouse3 moved to the area of the marker, starts moving by setting first to 0
                if mouse_x <= 0.035 and mouse_x >= -0.035 and mouse_y <= -0.335 and mouse_y >= -0.365:
                    first = 0
            # record the time when mouse hit the square
                    thisExp.addData('marker_hit', t)
             # if in this frame, doesn't hit marker, quit the function,nothing happens
            # if already hit the marker
            if first == 0:
                # if the mouse position is not the same as the last one
                # if the shape contains the mouse
                if slider_shaped.contains(mouse_d) and mouse_d.getPos()[0] != mouseRec[0]:
                    # update mouse location and marker position
                    mouseRec = mouse_d.getPos()
                    marker_position = (mouseRec[0], -0.35)
                    exp_rating = mouseRec[0]/slider_width*(slider_ticks[-1]-slider_ticks[0])+(slider_ticks[0]+slider_ticks[-1])/2
                    exp_rating = round(exp_rating, 1)
                    slider_rt = t
             #       thisExp.addData('exp_rating', exp_rating)
                    exp_rating_all.append(exp_rating)
             #       thisExp.addData('exp_rating_t', slider_rt)
                    exp_rt_all.append(slider_rt)
            return marker_position, mouseRec, first, slider_rt, exp_rating, exp_rating_all, exp_rt_all
  Routine final_reminder
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Ready to resume?
    KeyboardComponent wait_for_start_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent start_reset_clock
      Code Type = Py
      End Routine:
        globalClock.reset()
  Routine compound
    CodeComponent code_comp
      Code Type = Py
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      Begin Routine:
        #send the event code
        stim_marker('onset',SHOCK=False)
        phases=[2]
        # record global start time
        thisExp.timestampOnFlip(win, 'stim_onset')

        # initiate old rating as 50
        oldRating = 50

        # set start position of the slider to end position of the previous trial
        marker_position = (0,-0.35)

        # record the current position of the mouse
        mouseRec=mouse_comp.getPos()
        first = 1
        slider_rt = 999
        exp_rating = 999
        exp_rating_all = list()
        exp_rt_all = list()
      Each Frame:
        #mouse_d, first, mouseRec, slider_shaped
        # first = 0 or 1, mouseRec as updated rating, mouse0 as initial location,slidershape as where the slider is
        marker_position, mouseRec, first, slider_rt, exp_rating, exp_rating_all, exp_rt_all = getmarker(mouse_comp, first, mouseRec, shape_comp, slider_rt, exp_rating, marker_position, exp_rating_all, exp_rt_all)
      End Routine:
        stim_marker('offset',SHOCK=bool(int(us))) #deliver shock if need be
        #save the offset time
        thisExp.timestampOnFlip(win, 'stim_offset')
        thisExp.addData('CS_duration', t)
        # thisExp.addData('routineTiming', routineTimer.getTime())
        if exp_rating != 999:
            thisExp.addData('exp_rating_final', exp_rating)

        # will throw an error if subject didn't move
        if slider_rt != 999:
            thisExp.addData('exp_rt_final', slider_rt)

        thisExp.addData('exp_rating_all', exp_rating_all)
        thisExp.addData('exp_rt_all', exp_rt_all)
    TextComponent textr_comp
      letterHeight = 0.04
      pos = (0.45, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = noise (100%)
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    TextComponent textl_comp
      letterHeight = 0.04
      pos = (-0.45, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = no noise (0%)
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    PolygonComponent shape_comp
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0, -0.35)
      shape = rectangle
      size = (1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    SliderComponent sliderl_comp
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      letterHeight = 0.04
      pos = (-0.275, -0.35)
      readOnly = True
      size = (0.45, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      storeRating = False
      storeRatingTime = False
      styles = slider
      ticks = (0,50)
      units = height
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    ImageComponent img_compr
      image [set every repeat] = $path_right
      pos [set every repeat] = location_right
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent img_compl
      image [set every repeat] = $path_left
      pos [set every repeat] = location_left
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent expect_comp
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        How much do you expect a noise?
    SliderComponent sliderr_comp
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      letterHeight = 0.04
      pos = (0.275, -0.35)
      readOnly = True
      size = (0.45, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      storeRating = False
      storeRatingTime = False
      styles = slider
      ticks = (50,100)
      units = height
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    PolygonComponent marker_comp
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos [set every frame] = marker_position
      shape = rectangle
      size = (0.03, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MouseComponent mouse_comp
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent FPS_control
      Code Type = Py
      Begin Routine:
        # create sound if FPS == 1
        # preschedule sound object
        flag = 0
        if FPS == 1:
            now = ptb.GetSecs()
            mySound = sound.Sound('stimuli/calibrationprobe1.wav', stereo=True, hamming=False, name='mySound')
            mySound.setVolume(1)
            FPSstart = now+FPS_timing
            thisExp.addData('FPSstart', routineTimer.getTime())
            mySound.play(when=FPSstart)
      Each Frame:
        if FPS == 1:
            if flag == 0 and ptb.GetSecs() >= FPSstart:
                FPS_marker()
                thisExp.addData('FPStrigger', routineTimer.getTime())
                flag = 1
  Routine recall
    CodeComponent code_recall
      Code Type = Py
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      Begin Routine:
        #send the event code
        stim_marker('onset',SHOCK=False)

        # record global start time
        thisExp.timestampOnFlip(win, 'stim_onset')

        # initiate old rating as 50
        oldRating = 50

        # set start position of the slider to end position of the previous trial
        marker_position = (0,-0.35)

        # record the current position of the mouse
        mouseRec=mouse_recall.getPos()
        first = 1
        slider_rt = 999
        exp_rating = 999
        exp_rating_all = list()
        exp_rt_all = list()
      Each Frame:
        #mouse_d, first, mouseRec, slider_shaped
        # first = 0 or 1, mouseRec as updated rating, mouse0 as initial location,slidershape as where the slider is
        marker_position, mouseRec, first, slider_rt, exp_rating, exp_rating_all, exp_rt_all = getmarker(mouse_recall, first, mouseRec, shape_recall, slider_rt, exp_rating, marker_position, exp_rating_all, exp_rt_all)
      End Routine:
        stim_marker('offset',SHOCK=bool(int(us))) #deliver shock if need be
        #save the offset time
        thisExp.timestampOnFlip(win, 'stim_offset')

        thisExp.addData('CS_duration', t)
        # thisExp.addData('routineTiming', routineTimer.getTime())
        if exp_rating != 999:
            thisExp.addData('exp_rating_final', exp_rating)

        # will throw an error if subject didn't move
        if slider_rt != 999:
            thisExp.addData('exp_rt_final', slider_rt)

        thisExp.addData('exp_rating_all', exp_rating_all)
        thisExp.addData('exp_rt_all', exp_rt_all)
    TextComponent textr_recall
      letterHeight = 0.04
      pos = (0.45, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = noise (100%)
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    ImageComponent img_recall
      image [set every repeat] = $path
      pos [set every repeat] = location
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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    TextComponent textl_recall
      letterHeight = 0.04
      pos = (-0.45, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = no noise (0%)
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    PolygonComponent shape_recall
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos = (0, -0.35)
      shape = rectangle
      size = (1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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    SliderComponent sliderl_recall
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      letterHeight = 0.04
      pos = (-0.275, -0.35)
      readOnly = True
      size = (0.45, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      storeRating = False
      storeRatingTime = False
      styles = slider
      ticks = (0,50)
      units = height
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    TextComponent expect_recall
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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      text:
        How much do you expect a shock?
    SliderComponent sliderr_recall
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      letterHeight = 0.04
      pos = (0.275, -0.35)
      readOnly = True
      size = (0.45, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      storeRating = False
      storeRatingTime = False
      styles = slider
      ticks = (50,100)
      units = height
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    PolygonComponent marker_recall
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos [set every frame] = marker_position
      shape = rectangle
      size = (0.03, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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    MouseComponent mouse_recall
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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    CodeComponent preload
      Code Type = Py
      Begin Routine:
        # create sound if FPS == 1
        # preschedule sound object
        flag = 0
        if FPS == 1:
            now = ptb.GetSecs()
            mySound = sound.Sound('stimuli/calibrationprobe1.wav', stereo=True, hamming=False, name='mySound')
            mySound.setVolume(1)
            mySound.play(when=now + FPS_timing)
            timestart = now+FPS_timing
            thisExp.addData('FPS_scheduled', timestart)
      Each Frame:
        if FPS == 1:
            if flag == 0 and t >= FPS_timing:
                # send trigger
                FPS_marker()
                thisExp.addData('FPStrigger', t)
                flag = 1
    CodeComponent FPS_recall
      Code Type = Py
      disabled = True
      Begin Routine:
        #send the event code
        flag = 0
        mySound = sound.Sound('stimuli/calibrationprobe1.wav', stereo=True, hamming=False, name='mySound')
        mySound.started = False
      Each Frame:
        if expect_recall.status == STARTED and flag == 0 and FPS == 1:
            # this should only run once each trial at the start
            # start a trial clock when the prompt starts
            # trial clock will add FPS timing and get executed when time runs out
            flag = 1
        # flag should only be 1 if there is sound to be played at this trial
        if flag == 1:
            if mySound.started == False and t >= FPS_timing:
                FPS_marker()
                thisExp.timestampOnFlip(win, 'marker_sent')
                thisExp.addData('FPS_t_start', t )
                mySound.play()
                # double check this offset time is correct
                thisExp.addData('FPS_t_stop',  t )
                mySound.started=True
      End Routine:
        mySound.started = False
        flag = 0
  Routine breaktime
    TextComponent inst_break
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        Take a break!

        Press SPACEBAR to continue...
    KeyboardComponent break_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation_cross
    PolygonComponent cross_start
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent reset_clock
      Code Type = Py
      End Routine:
        globalClock.reset()
  Routine iti
    CodeComponent iti_code_2
      Code Type = Py
      Begin Routine:
        thisExp.addData('iti_begin_cond', routineTimer.getTime())
      End Routine:
        thisExp.addData('iti_duration', routineTimer.getTime())
    PolygonComponent cross_2
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
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  Routine retro_ratings
    CodeComponent ratings_routine_code
      Code Type = Py
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      Begin Routine:
        ratings.ratings_begin(thisExp, globalClock, trialClock, routineTimer,
                              cs_duration, rating_prompt, prompt)
        pressed, rating_img, endTime = False, None, float('inf')
      Each Frame:
        return_values = ratings.ratings_frame(prompt, rating_prompt, rating_img,
                                              rating_type, rating_response, pressed,
                                              endTime, t, continueRoutine)
        rating_img, pressed, endTime, t, continueRoutine = return_values
      End Routine:
        ratings.ratings_end(thisExp, globalClock, trialClock)
    ImageComponent rating_image
      image [set every frame] = $rating_img
      pos = (0, -0.5)
      saveStartStop = False
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent prompt
      letterHeight = 0.1
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent rating_stim
      image [set every frame] = $cs_img
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent rating_response
      allowedKeys = '1','2','3','4','5','num_1','num_2','num_3','num_4','num_5'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine retro_iti
    PolygonComponent fixation_cross_rating
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = height
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Flow
  Routine setup
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine final_reminder
  LoopTerminator trials
  Routine fixation_cross
  LoopInitiator compound_trials loopType="TrialHandler"
    conditionsFile = $f"data/{bidsID}/{bidsID}_ses-1_task-compound_events-input.xlsx"
    loopType = sequential
    nReps = 1
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    Routine compound
    Routine iti
  LoopTerminator compound_trials
  Routine breaktime
