PsychoPy2experiment version="2023.1.3"
Settings
  Data file delimiter = comma
  Data filename = f'data/{bidsID}/{bidsID}_ses-1_task-{expName}_{expInfo["date"]}'
  Experiment info = {'session': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1512, 982]
  color = $[-0.1765, -0.1765, -0.1765]
  expName = base
  keyboardBackend = Pyglet
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Routines
  Routine in1
    CodeComponent input_files_code
      Code Type = Py
      Before Experiment:
        from psychopy.parallel import ParallelPort
        from subprocess import Popen
        import time
        import pandas as pd
        import os
        import numpy as np
        import random

        home_dir = os.path.expanduser('~')
        data_dir = os.path.join(home_dir, 'Desktop', 'pig', 'experiment', 'data')
        input_dir = os.path.join(home_dir,'Desktop', 'pig', 'experiment', 'stims')
        os.chdir(input_dir)

        #!/usr/bin/env python
        # Script to generate participant-specific trial orders and save input files

        import os
        import pandas as pd
        from psychopy import gui, core

        # === GUI to gather participant info ===
        dlg = gui.Dlg(title='Initialize participant')
        dlg.addField('Participant ID')
        dlg.addField('Phase order (1-4)', choices=[1, 2, 3, 4])
        dlg.addField('Room', choices=['VR', 'behavior'])
        dlg.addField('Init parallel port?', choices=['yes', 'no (testing)'])

        user_input = dlg.show()

        if dlg.OK is False:
            core.quit()

        # === Extract GUI inputs ===
        participant_id = int(user_input[0])
        order_ind = int(user_input[1])
        room_input = user_input[2]
        testing_mode = user_input[3] == 'no (testing)'

        # === Define paths ===
        bidsID = f"sub-PYG{participant_id:03d}"
        template_dir = os.path.join(home_dir, "Desktop","pig", "experiment", "task_templates", f"order {order_ind}")
        output_dir = os.path.join(home_dir, "Desktop","pig", "experiment","data", bidsID)
        os.makedirs(output_dir, exist_ok=True)

        # === Define all phase files to load and save ===
        phase_files = {
            "acq": "acq.csv",
            "ext": "ext.csv",
            "recall": "recall.csv",
            "bps1": "bps1.csv",
            "bps2": "bps2.csv",
        }

        psycho_columns_to_remove = [
            "trials.thisRepN", "trials.thisTrialN", "trials.thisN", "trials.thisIndex",
            "cond_trials.thisRepN", "cond_trials.thisTrialN", "cond_trials.thisN", "cond_trials.thisIndex"
        ]

        phase_dfs = {}

        for phase, filename in phase_files.items():


            if phase in ["recall", "bps1", "bps2"]:
                session = 3
            else:
                session = 1

            filepath = os.path.join(template_dir, filename)
            if not os.path.exists(filepath):
                raise FileNotFoundError(f"Missing input file: {filepath}")

            df = pd.read_csv(filepath)
            df = df.drop(columns=[col for col in psycho_columns_to_remove if col in df.columns])
            df.insert(0, "participant", participant_id)
            phase_dfs[phase] = df

            output_filename = f"{bidsID}_ses-{session}_task-{phase}_events-input.csv"
            output_path = os.path.join(output_dir, output_filename)
            df.to_csv(output_path, index=False)

        print(f"Participant files generated for {bidsID} in {output_dir}")




        #PARALLEL PORT CODE

        #BIO = True if user_input[4] == 'yes' else False
        testing_mode = True  # Set to False when running real experiments

        if not testing_mode:
            BIO = True if user_input[5] == 'yes' and user_input[4] == 'VR' else False
            BIO2 = True if user_input[5] == 'yes' and user_input[4] == 'behavior' else False
        else:
            BIO = False
            BIO2 = False
            logging.warn("Running in testing mode: BIO and BIO2 disabled.")

        if BIO:
            pport = ParallelPort(address='0xEFF8') #added 6/14
        elif BIO2:
            pport = ParallelPort(address='0x3FB8') #added 6/14
        else:
            class PortEmulator(object):
                def __init__(self, address=None):
                    pass
                def setData(self, data=None):
                    logging.warn("Sent data to non-existent PPort:{}".format(data))
                def setPin(self, pin, data):
                    logging.warn(f"Sent data to non-existent PPort pin: {pin}, {data}")
            pport = PortEmulator()

        pport.setData(0) #reset the pins

        def shock():
            pport.setPin(2,1)
            time.sleep(.005)
            pport.setPin(2,0)

        def stim_marker(on_or_offset='',SHOCK=False):
            if SHOCK:
                shock()
            if 'on' in on_or_offset:
                pport.setPin(4,1)
            elif 'off' in on_or_offset:
                pport.setPin(4,0)

        #CREATE INPUT FILES CODE
  Routine in_end_experiment
    KeyboardComponent end_exp_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (end_exp_resp.keys)=='space'
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    TextComponent end_exp
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (end_exp_resp.keys)=='space'
      text = Experimenter press SPACE to exit the task. Files generated.
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Flow
  Routine in1
  Routine in_end_experiment
