PsychoPy2experiment version="2023.1.3"
Settings
  Data filename = f'data/{bidsID}/{bidsID}_ses-2_task-{expName}_{expInfo["date"]}'
  Experiment info = {'session': '2'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1512, 982]
  color = $[-0.1765, -0.1765, -0.1765]
  expName = recall
  keyboardBackend = Pyglet
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Routines
  Routine in2
    TextComponent inst2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst2_resp.keys)=='space'
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      text:
        The instructions for this task are the same as where you left off on your first session.

        That is, on each trial, I want you to rate whether or not you expect to receive a shock.

        Answer “Yes” or “No” to the following question by pressing the corresponding key on the keypad:

        Do you expect to receive a shock following this picture?

        1 = Yes
        2 = No

        Do you have any questions?
    KeyboardComponent inst2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst2_resp.keys)=='space'
      store = nothing
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  Routine in1
    TextComponent inst1
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst1_resp.keys)=='space'
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      text:
        First, please make sure your cell phone is silenced.

        We will be measuring how much you are sweating from the sensors on your hand.

        These are very sensitive to movement and posture, so please sit up straight and do not shift around in your seat or move around during the experiment.

        Press SPACE to continue…
    KeyboardComponent inst1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst1_resp.keys)=='space'
      store = nothing
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  Routine in3
    TextComponent inst3
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst3_resp.keys)=='space'
      text = Press SPACE to begin the experiment.
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    KeyboardComponent inst3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst3_resp.keys)=='space'
      store = nothing
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  Routine in4
    TextComponent inst4
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst4_resp.keys)=='space'
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      text:
        PLEASE MAKE A RESPONSE ON EVERY TRIAL, even if you are just guessing.

        We are measuring how fast you press the button.

        You only need to press a button when you see a picture.

        Press SPACE to continue with the instructions...
    KeyboardComponent inst4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst4_resp.keys)=='space'
      store = nothing
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  Routine ex_iti
    PolygonComponent example_iti
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent ex_iti_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (ex_iti_resp.keys)=='space'
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  Routine ex_trial
    KeyboardComponent ex_trials_resp
      allowedKeys = 'num_1','num_2','1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent ex_tool
      color = $ex_tool_resp_color
      letterHeight = 0.03
      pos = (.275, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        2
        tool
    TextComponent ex_animal
      color = $ex_animal_resp_color
      letterHeight = 0.03
      pos = (-.275, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        1
        animal
    CodeComponent col_code_ex
      Code Type = Py
      Before Experiment:
        #set the response colors to white
        ex_animal_resp_color = 'white'
        ex_tool_resp_color = 'white'
      Each Frame:
        #change the color of the response if one is pressed
        if 'num_1' in ex_trials_resp.keys:
            ex_animal_resp_color = 'darkgrey'
        elif 'num_2' in ex_trials_resp.keys:
            ex_tool_resp_color = 'darkgrey'
    ImageComponent image
      image = /Users/sophiabibb/Desktop/dunsmoor_lab/3191883_0.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine in5
    TextComponent inst5
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst5_resp.keys)=='space'
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      text:
        To recap:

        Your job is to answer "Yes" or "No" to whether you expect to receive a shock.

        Please note: You are NOT influencing the shocks with your button presses.
        In other words, you cannot trigger a shock or avoid a shock with your responses.
        To be clear: Pressing the "wrong" button will not give you a shock.

        Do you have any questions before we get started?
    KeyboardComponent inst5_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst5_resp.keys)=='space'
      store = nothing
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  Routine in_6
    KeyboardComponent inst6_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst6_resp.keys)=='space'
      store = nothing
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    TextComponent inst6
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst6_resp.keys)=='space'
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  Routine in_begin_experiment
    TextComponent beg_exp
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (beg_exp_resp.keys)=='5'
      text = --
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    KeyboardComponent beg_exp_resp
      allowedKeys = '5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (beg_exp_resp.keys)=='space'
      store = nothing
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    CodeComponent beg_exp_code
      Code Type = Py
      Before Experiment:
        from psychopy.parallel import ParallelPort
        from subprocess import Popen
        import time

        expName = 'recall'  # from the Builder filename that created this script
        dlg = gui.Dlg(title='Init participant')
        dlg.addField('participant', choices = [int(i.split('sub-PYG')[-1]) for i in os.listdir('data') if 'sub-PYG' in i])
        dlg.addField('room', choices =['VR', 'behavior']) #added 6/14
        dlg.addField('Init parallel port?', choices=['yes','no (testing)'])

        user_input = dlg.show()
        if dlg.OK == False:
            core.quit()  # user pressed cancel
        expInfo = {'participant':user_input[0]}
        bidsID = 'sub-PYG{0:0=3d}'.format(int(expInfo['participant']))

        BIO = True if user_input[2] == 'yes' and user_input[1] == 'VR' else False #added 6/14
        BIO2 = True if user_input[2] == 'yes' and user_input[1] == 'behavior' else False #added 6/14

        if BIO:
            pport = ParallelPort(address='0xEFF8') #added 6/14
        elif BIO2:
            pport = ParallelPort(address='0x3FB8') #added 6/14
        else:
            class PortEmulator(object):
                def __init__(self, address=None):
                    pass
                def setData(self, data=None):
                    logging.warn("Sent data to non-existent PPort:{}".format(data))
                def setPin(self, pin, data):
                    logging.warn(f"Sent data to non-existent PPort pin: {pin}, {data}")
            pport = PortEmulator()

        pport.setData(0) #reset the pins

        def shock():
            pport.setPin(2,1)
            time.sleep(.005)
            pport.setPin(2,0)

        def stim_marker(on_or_offset='',SHOCK=False):
            if SHOCK:
                shock()
            if 'on' in on_or_offset:
                pport.setPin(4,1)
            elif 'off' in on_or_offset:
                pport.setPin(4,0)
  Routine iti
    TextComponent iti_animals
      letterHeight = 0.03
      pos = (-.15, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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      text:
        1
        Yes
    TextComponent iti_tools
      letterHeight = 0.03
      pos = (.15, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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      text:
        2
        No
    ImageComponent iti_trial
      image = stims/whitecrosshair.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        iti_clock = core.Clock()

        # Create a timer that runs during ITI
        warning_timer = 0  # Use simple variable instead of core.Clock (safer)
        warning_opacity = 0  # Default = hidden

        # If no response was made, prepare to show the warning
        if 'response_made' in globals() and not response_made:
            warning_timer = 3  # Show for 3 seconds
            warning_opacity = 1


        print(f"[ITI] response_made: {response_made}, warning shown: {warning_opacity == 1}")
      Each Frame:
        # Countdown the warning display timer
        if iti_clock.getTime() >= iti_duration:
            continueRoutine = False

        if warning_timer > 0:
            warning_timer -= frameDur  # frameDur is time between frames
            if warning_timer <= 0:
                warning_opacity = 0
    TextComponent warning_text
      color = orange
      letterHeight = 0.04
      opacity [set every repeat] = warning_opacity
      pos = (0, -.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every frame] = Please make a response for each trial
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  Routine trial
    KeyboardComponent trials_resp
      allowedKeys = 'num_1','num_2','1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $cs_duration
      store = first key
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    TextComponent animal
      color [set every frame] = $animal_resp_color
      letterHeight = 0.03
      pos = (-.15, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $cs_duration
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      text:
        1
        Yes
    TextComponent tool
      color [set every frame] = $tool_resp_color
      letterHeight = 0.03
      pos = (.15, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $cs_duration
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      text:
        2
        No
    ImageComponent cond_image
      image [set every repeat] = $stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $cs_duration
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    CodeComponent cs_code
      Code Type = Py
      Begin Experiment:
        response_made = True
      Begin Routine:
        #send the event code
        stim_marker('onset',SHOCK=False)

        #set the response colors to white
        animal_resp_color = 'white'
        tool_resp_color = 'white'
      Each Frame:
        #change the color of the response if one is pressed
        if '1' in trials_resp.keys:
            animal_resp_color = 'orange'
        elif '2' in trials_resp.keys:
            tool_resp_color = 'orange'
      End Routine:
        #send the event code
        stim_marker('offset',SHOCK=False)

        # Store whether a valid response was made
        if trials_resp.keys in ['1', '2']:
            response_made = True
        else:
            response_made = False

        # Log response
        thisExp.addData('response_detected', response_made)
        print(f"[Trial] trials_resp.keys: {trials_resp.keys}, response_made: {response_made}")
  Routine in_end_experiment
    KeyboardComponent end_exp_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (end_exp_resp.keys)=='space'
      store = nothing
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    TextComponent end_exp
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (end_exp_resp.keys)=='space'
      text = Experimenter press SPACE to exit the task.
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    CodeComponent code
      Code Type = Py
      End Experiment:
        thisExp.saveAsWideText(filename + '.csv')


        # Now do cleanup AFTER saving
        import pandas as pd
        filename = f'data/{bidsID}/{bidsID}_ses-2_task-{expName}_{expInfo["date"]}'

        try:
            df = pd.read_csv(filename + '.csv')
            cols_to_drop = [
                'recall_trials.thisRepN',
                'recall_trials.thisTrialN',
                'recall_trials.thisN',
                'recall_trials.thisIndex'
            ]
            df = df.drop(columns=[col for col in cols_to_drop if col in df.columns])
            df.to_csv(filename + '.csv', index=False)

        except Exception as e:
            print(f"Failed to clean data file: {e}")
  Routine break_
    KeyboardComponent break_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (break_resp.keys)=='space'
      store = nothing
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    TextComponent break_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (break_resp.keys)=='space'
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      text:
        This is a short break.

        Please remain as still as possible and do not check your phone.

        When you are ready to continue with the experiment, press SPACE.
  Routine initial_iti
    TextComponent iti_animals_2
      letterHeight = 0.03
      pos = (-.15, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        1
        Yes
    TextComponent iti_tools_2
      letterHeight = 0.03
      pos = (.15, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        2
        No
    ImageComponent iti_initial
      image = stims/whitecrosshair.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine final_iti
    TextComponent iti_animals_3
      letterHeight = 0.03
      pos = (-.15, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        1
        Yes
    TextComponent iti_tools_3
      letterHeight = 0.03
      pos = (.15, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        2
        No
    ImageComponent iti_final
      image = stims/whitecrosshair.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  Routine in1
  Routine in2
  Routine in3
  Routine in_begin_experiment
  Routine initial_iti
  LoopInitiator cond_trials loopType="TrialHandler"
    conditionsFile = $f'data/{bidsID}/{bidsID}_ses-1_task-acq_events-input.csv'
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('CS_type', 'CSm'), ('trial', 't_001'), ('phase', 'recall'), ('cs_duration', 5), ('iti_duration', 5), ('categroy_trial', 'tool_001'), ('CS_trial', 'CSm_001'), ('counterbal_order', 'Order1'), ('stim', 'stims/tools/stapler.jpg')]),
      OrderedDict([('CS_type', 'CSp'), ('trial', 't_002'), ('phase', 'recall'), ('cs_duration', 5), ('iti_duration', 6), ('categroy_trial', 'animal_001'), ('CS_trial', 'CSp_001'), ('counterbal_order', 'Order1'), ('stim', 'stims/animals/snail.jpg')]),
      OrderedDict([('CS_type', 'CSm'), ('trial', 't_003'), ('phase', 'recall'), ('cs_duration', 5), ('iti_duration', 7), ('categroy_trial', 'tool_002'), ('CS_trial', 'CSm_002'), ('counterbal_order', 'Order1'), ('stim', 'stims/tools/coffeegrinder.jpg')]),
      OrderedDict([('CS_type', 'CSp'), ('trial', 't_004'), ('phase', 'recall'), ('cs_duration', 5), ('iti_duration', 6), ('categroy_trial', 'animal_002'), ('CS_trial', 'CSp_002'), ('counterbal_order', 'Order1'), ('stim', 'stims/animals/goat.jpg')]),
      OrderedDict([('CS_type', 'CSp'), ('trial', 't_005'), ('phase', 'recall'), ('cs_duration', 5), ('iti_duration', 6), ('categroy_trial', 'animal_003'), ('CS_trial', 'CSp_003'), ('counterbal_order', 'Order1'), ('stim', 'stims/animals/clownfish.jpg')]),
      OrderedDict([('CS_type', 'CSm'), ('trial', 't_006'), ('phase', 'recall'), ('cs_duration', 5), ('iti_duration', 7), ('categroy_trial', 'tool_003'), ('CS_trial', 'CSm_003'), ('counterbal_order', 'Order1'), ('stim', 'stims/tools/necktie.jpg')])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
    Routine trial
    Routine iti
  LoopTerminator cond_trials
  Routine final_iti
  Routine in_end_experiment
