PsychoPy2experiment version="2023.1.3"
Settings
  Data file delimiter = tab
  Data filename = f'data/shock_calibration/shock_calibration'
  Experiment info = {'': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $(-0.1765, -0.1765, -0.1765)
  expName = instructions_setup
  keyboardBackend = ioHub
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Routines
  Routine slide1
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        We will now calibrate the intensity level of the electrical shock.

        The pulse is very short, only 50 milliseconds.

        Press space to continue…
    KeyboardComponent slide1_resp
      allowedKeys = 'space','1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent init_shock
      Code Type = Py
      Before Experiment:
        from psychopy.parallel import ParallelPort
        from subprocess import Popen
        import time

        dlg = gui.Dlg(title='set up calibration')
        dlg.addField('room', choices =['VR', 'behavior']) #added 6/14
        dlg.addField('Init parallel port?', choices=['yes','no (testing)'])

        user_input = dlg.show()

        if dlg.OK == False:
            core.quit()  # user pressed cancel

        BIO = True if user_input[1] == 'yes' and user_input[0] == 'VR' else False #added 6/14
        BIO2 = True if user_input[1] == 'yes' and user_input[0] == 'behavior' else False #added 6/14

        if BIO:
            pport = ParallelPort(address='0xEFF8') #added 6/14
        elif BIO2:
            pport = ParallelPort(address='0x3FB8') #added 6/14

        else:
            class PortEmulator(object):
                def __init__(self, address=None):
                    pass
                def setData(self, data=None):
                    logging.warn("Sent data to non-existent PPort:{}".format(data))
                def setPin(self, pin, data):
                    logging.warn(f"Sent data to non-existent PPort pin: {pin}, {data}")
            pport = PortEmulator()

        pport.setData(0) #reset the pins

        def shock():
            pport.setPin(2,1)
            time.sleep(.005)
            pport.setPin(2,0)

        def stim_marker(on_or_offset='',SHOCK=False):
            if SHOCK:
                shock()
            if 'on' in on_or_offset:
                pport.setPin(4,1)
            elif 'off' in on_or_offset:
                pport.setPin(4,0)
  Routine slide2
    TextComponent slide2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For the purposes of the experiment, the electrical pulse is meant to be annoying.

        It is meant to be something that you do not like, and that you would anticipate receiving.

        However, it is not meant to be something that would make you say “ouch!”

        Press space to continue…
    KeyboardComponent slide2_resp
      allowedKeys = 'space','1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine slide3
    TextComponent slide3_text
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        We will start the calibration at a low level that you might not even feel.

        We will then move it up in stages until it is something that you would describe as highly annoying and unpleasant, but not painful.

        On a scale from 0 (least painful or no sensation) to 9 (worst pain imaginable) the pulse should feel like a 5 or 6.
    KeyboardComponent slide3_resp
      allowedKeys = 'space','1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine slide4
    TextComponent slide4_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press space to deliver a shock.

        Using the intensity scale, please how intense each shock felt.

        Press escape to exit calibration.
    KeyboardComponent slide4_resp
      allowedKeys = 'space','1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      Each Frame:
        if 'space' in slide4_resp.keys:
            shock()
Flow
  Routine slide1
  Routine slide2
  Routine slide3
  LoopInitiator calibration loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    Routine slide4
  LoopTerminator calibration
