PsychoPy2experiment version="2023.1.3"
Settings
  Data file delimiter = comma
  Data filename = f'data/{bidsID}/{bidsID}_ses-1_task-{expName}_{expInfo["date"]}'
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1512, 982]
  color = $[-0.1765, -0.1765, -0.1765]
  expName = baseline
  keyboardBackend = Pyglet
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Routines
  Routine in2
    TextComponent inst2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst2_resp.keys)=='space'
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      text:
        During this part of the experiment, you will see a picture of either an animal or tool.
        You will see this picture for a few seconds.

        Each time you see a picture of an animal or tool, I want you to tell me which category you think the picture belongs to:

        1 = animals
        2 = tools
    KeyboardComponent inst2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst2_resp.keys)=='space'
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  Routine in1
    KeyboardComponent inst1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst1_resp.keys)=='space'
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    TextComponent inst1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst1_resp.keys)=='space'
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      text:
        First, please make sure your cell phone is silenced.

        We will be measuring how much you are sweating from the sensors on your hand.

        These are very sensitive to movement and posture, so please sit up straight and do not shift around in your seat or move during the experiment.

        Press SPACE to continue...
    CodeComponent input_files_code
      Code Type = Py
      Before Experiment:
        from psychopy.parallel import ParallelPort
        from subprocess import Popen
        import time
        import pandas as pd
        import os
        import numpy as np
        import random

        home_dir = os.path.expanduser('~')
        data_dir = os.path.join(home_dir, 'Desktop', 'pig', 'mrs-m', 'experiment', 'data')
        input_dir = os.path.join(home_dir,'Desktop', 'pig', 'mrs-m', 'experiment', 'stims')
        if os.path.exists(input_dir):
            os.chdir(input_dir)
        else:
            print(f"WARNING: Stimulus folder not found: {input_dir}")
            print("Continuing without changing directory — some files may not load.")

        dlg = gui.Dlg(title = 'PYG subject initialization')
        dlg.addField('participant')
        dlg.addField('CS_order', choices=['A','T'])
        dlg.addField('phase_order_input', choices=[1,2,3,4,5,6])
        dlg.addField('room', choices =['VR', 'behavior']) #added 6/14
        dlg.addField('Init parallel port?', choices=['yes','no (testing)'])

        user_input = dlg.show()

        if dlg.OK == False:
            core.quit()  # user pressed cancel

        bidsID = 'sub-PYG{0:0=3d}'.format(int(user_input[0]))
        cs_order = user_input[1]
        phase_order_input = user_input[2]
        room_input = user_input[3] #added 6/14


        #PARALLEL PORT CODE

        #BIO = True if user_input[4] == 'yes' else False
        testing_mode = True  # Set to False when running real experiments

        if not testing_mode:
            BIO = True if user_input[5] == 'yes' and user_input[4] == 'VR' else False
            BIO2 = True if user_input[5] == 'yes' and user_input[4] == 'behavior' else False
        else:
            BIO = False
            BIO2 = False
            logging.warn("Running in testing mode: BIO and BIO2 disabled.")

        if BIO:
            pport = ParallelPort(address='0xEFF8') #added 6/14
        elif BIO2:
            pport = ParallelPort(address='0x3FB8') #added 6/14
        else:
            class PortEmulator(object):
                def __init__(self, address=None):
                    pass
                def setData(self, data=None):
                    logging.warn("Sent data to non-existent PPort:{}".format(data))
                def setPin(self, pin, data):
                    logging.warn(f"Sent data to non-existent PPort pin: {pin}, {data}")
            pport = PortEmulator()

        pport.setData(0) #reset the pins

        def shock():
            pport.setPin(2,1)
            time.sleep(.005)
            pport.setPin(2,0)

        def stim_marker(on_or_offset='',SHOCK=False):
            if SHOCK:
                shock()
            if 'on' in on_or_offset:
                pport.setPin(4,1)
            elif 'off' in on_or_offset:
                pport.setPin(4,0)

        #CREATE INPUT FILES CODE

        cs_cats = {'CS+':'animals' if cs_order == 'A' else 'tools',
                   'CS-':'tools' if cs_order == 'A' else 'animals'}
        phase_order = {1:[1,2,3],
                       2:[1,3,2],
                       3:[3,2,1],
                       4:[3,1,2],
                       5:[2,1,3],
                       6:[2,3,1]}

        #create variables that are lists of my phases to be used for iteration later
        phases = ['base','fear','extcc','renewal_1', 'mem_1','sou_typ_val_1']
        day1_phases = ['base','fear','extcc']

        #CREATE DAY 1 DATAFRAMES:

        #create list of day 1 phases
        day1_phases = ['base','fear','extcc']
        #create dataframe of stims (the one with the 6 columns of 24 animals or tools)
        stims = pd.read_csv('day1_stims_groups.csv')
        day1_stims = stims.sample(frac=1).reset_index(drop=True) #shuffle within columns
        day2_stims = stims.sample(frac=1).reset_index(drop=True) #shuffle within columns again
        soutypval_stims = stims.sample(frac=1).reset_index(drop=True) #shuffle within columns again!
        #read in the different task templates for each phase, and name them after each phase (using list comprehension)
        day1_dfs = {phase: pd.read_csv(f'../task_templates/{phase}_template.csv').set_index(['trial_type', 'trial']) for phase in day1_phases}


        itis = [5,6,7]
        #for each phase (count them) in day 1 phases (base, fear, extcc):
        for p, phase in enumerate(day1_phases):
            #and for each of CS+ and CS-:
                for con in ['CS+','CS-']:
                #find the stimulus column in each phase and for both CS+ and CS-,
                #and fill it with either animals or tools from the day1_stims_groups csv,
                #depending on the cs_cats relationship. Made sure all variables were in the code.
                    day1_dfs[phase].loc[con,'stimulus'] = day1_stims[f'{cs_cats[con]}_{phase_order[phase_order_input][p]}'].values
                #shuffle the itis and create a random set of 48
                iti_blocks = [np.random.choice(itis, 8, replace=True) for i in range(6)]
                #put them all together into one list
                iti_blocks = np.concatenate(iti_blocks)
                #put the list into the iti_duration column in each dataframe
                #how do i select just a column.....?
                day1_dfs[phase].loc[:, 'iti_duration'] = iti_blocks
                #reset the indices
                day1_dfs[phase] = day1_dfs[phase].reset_index()

        #FILL IN EXTINCTION CC STIMS



        #note that once it is the index, pandas will not recognize it as a column anymore!


        #ADD GROUP FOR BASE 7/14/22

        day1_dfs['base'] = day1_dfs['base'].set_index('trial_type')


        #ADD GROUP FOR FEAR 7/14/22

        day1_dfs['fear'] = day1_dfs['fear'].set_index('trial_type')


        #RENEWAL

        renewal_stims = pd.read_csv('renewal_stims.csv')
        renewal_stims = renewal_stims.sample(frac=1).reset_index(drop=True) #shuffle within columns
        renewal_df = pd.read_csv('../task_templates/renewal_template.csv').set_index(['trial_type', 'trial'])

        for con in ['CS+', 'CS-']:
            renewal_df.loc[con, 'stimulus'] = renewal_stims[f'{cs_cats[con]}'].values

        renewal_df.loc['new', 'stimulus'] = f'stims/tr1renewal_{cs_cats[con]}.jpg'  #assigns the first row named "new" with a novel and consistent pic of the subject's CS-...
        renewal_df.loc['new', 'iti_duration'] = '5'  #assigns the first row named "new" with an iti of 5 seconds

        #ADD GROUP FOR RENEWAL 7/14/22



        #SET ITIs
        itis = [5,6,7]
        iti_blocks = [np.random.choice(itis, 6, replace=True) for i in range(4)]
        #put them all together into one list
        iti_blocks = np.concatenate(iti_blocks)
        #put the list into the iti_duration column in each dataframe
        #how do i select just a column.....?
        renewal_df.loc[['CS+', 'CS-'], 'iti_duration'] = iti_blocks

        #RECOGNITION MEMORY
        mem_df = pd.read_csv('../task_templates/mem_template.csv').set_index(['trial_type', 'phase'])
        mem_df.reset_index(['trial_type']) #changed this to fix but 6/9
        itis_mem = [2,3]
        iti_mem_blocks = [np.random.choice(itis_mem, 20, replace=True) for i in range(12)]
        iti_mem_blocks = np.concatenate(iti_mem_blocks)
        mem_df.loc[:, 'iti_duration'] = iti_mem_blocks

        #add all same stims as day 1 except reshuffled, according to the same user input as on day 1.
        for p, phase in enumerate(day1_phases):
            for con in ['CS+','CS-']:
                    mem_df.loc[(con, phase), 'stimulus'] = day2_stims[f'{cs_cats[con]}_{phase_order[phase_order_input][p]}'].values

        #load rec. mem foil stims
        foil_stims = pd.read_csv('foil_stims_list.csv').sample(frac=1).reset_index(drop=True)

        for con in ['CS+','CS-']:
            mem_df.loc[(con, 'foil'), 'stimulus'] = foil_stims[f'{cs_cats[con]}'].values

        #ADD GROUP FOR MEM 7/14/22


        #SOUTYP

        soutyp_stims = stims.sample(frac=1).reset_index(drop=True) #shuffle within columns again!
        soutyp_df = pd.read_csv('../task_templates/soutyp_template.csv').set_index(['trial_type', 'phase'])
        #add all same stims as day 1 except reshuffled, according to the same user input as on day 1.
        for p, phase in enumerate(day1_phases):
            for con in ['CS+','CS-']:
                   soutyp_df.loc[(con, phase), 'stimulus'] = soutyp_stims[f'{cs_cats[con]}_{phase_order[phase_order_input][p]}'].values

        #ADD GROUP FOR SOUTYP 7/14/22



        #EXPORT DATA TO CSVs
        os.chdir(data_dir)
        os.makedirs(f'{bidsID}',exist_ok=True)
        for phase in day1_phases:
          ses = 1
          phase_str = phase.split('_')[0]
          day1_dfs[phase].reset_index().to_csv(f'{bidsID}/{bidsID}_ses-{ses}_task-{phase_str}_events-input.csv',index=False)

        renewal_df.reset_index().to_csv(f'{bidsID}/{bidsID}_ses-2_task-renewal_events-input.csv',index=False)
        mem_df.reset_index().to_csv(f'{bidsID}/{bidsID}_ses-2_task-rec-memory_events-input.csv',index=False)
        soutyp_df.reset_index().to_csv(f'{bidsID}/{bidsID}_ses-2_task-soutyp_events-input.csv',index=False)
  Routine in3
    TextComponent inst3
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst3_resp.keys)=='space'
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      text:
        Please make a response for EVERY PICTURE. We are also measuring how fast you press the button. Please try to be as quick and accurate as possible.

        You only need to press a button when you see a picture of an animal or tool.

        Press SPACE to see what this will look like:
    KeyboardComponent inst3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst3_resp.keys)=='space'
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  Routine in4
    TextComponent inst4
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst4_resp.keys)=='space'
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      text:
        So, to recap:

        When you see a picture of an animal or a tool, press 1 or 2 to put the picture in its category. Please respond as quickly and as accurately as possible. Please make a response for every picture as soon as the picture appears on the screen.

        Any questions?
    KeyboardComponent inst4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst4_resp.keys)=='space'
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  Routine ex_iti
    KeyboardComponent ex_iti_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (ex_iti_resp.keys)=='space'
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    TextComponent ex_animal_iti
      letterHeight = 0.03
      pos = (-.15,-.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (ex_iti_resp.keys)=='space'
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      text:
        1
        animals
    TextComponent ex_tool_iti
      letterHeight = 0.03
      pos = (.15,-.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (ex_iti_resp.keys)=='space'
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      text:
        2
        tools
    ImageComponent ex_crosshair
      image = stims/whitecrosshair.png
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [condition] = (ex_iti_resp.keys)=='space'
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  Routine ex_trial
    KeyboardComponent ex_trials_resp
      allowedKeys = 'num_1','num_2','1','2', '1!','2@'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent ex_tool
      color [set every frame] = $ex_tool_resp_color
      letterHeight = 0.03
      pos = (.15, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        2
        tools
    TextComponent ex_animal
      color [set every frame] = $ex_animal_resp_color
      letterHeight = 0.03
      pos = (-.15, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        1
        animals
    CodeComponent col_code_ex
      Code Type = Py
      Begin Routine:
        #send the event code
        stim_marker('onset',SHOCK=False)

        #set the response colors to white
        ex_animal_resp_color = 'white'
        ex_tool_resp_color = 'white'
      Each Frame:
        #change the color of the response if one is pressed
        if '1' in ex_trials_resp.keys:
            ex_animal_resp_color = 'darkgrey'
        elif '2' in ex_trials_resp.keys:
            ex_tool_resp_color = 'darkgrey'
      End Routine:
        #send the event code
        stim_marker('offset',SHOCK=False)
    ImageComponent image
      image = stims/dummystim.jpg
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine in5
    TextComponent inst5
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst5_resp.keys)=='space'
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      text:
        PLEASE MAKE A RESPONSE ON EVERY TRIAL, even if you are just guessing.

        We are measuring how fast you press the button.

        You only need to press a button when you see a picture.

        Press SPACE to continue with the instructions...
    KeyboardComponent inst5_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst5_resp.keys)=='space'
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  Routine in_6
    KeyboardComponent inst6_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst6_resp.keys)=='space'
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    TextComponent inst6
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst6_resp.keys)=='space'
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  Routine in_begin_experiment
    TextComponent beg_exp
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (beg_exp_resp.keys)=='space'
      text = Press SPACE to begin the experiment.
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    KeyboardComponent beg_exp_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (beg_exp_resp.keys)=='space'
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  Routine iti
    TextComponent ani_iti
      letterHeight = 0.03
      pos = (-.15,-.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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      text [set every repeat]:
        1
        animals
    TextComponent tool_iti
      letterHeight = 0.03
      pos = (.15,-.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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      text:
        2
        tools
    ImageComponent crosshair
      image = stims/whitecrosshair.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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  Routine trial
    CodeComponent cs_code
      Code Type = Py
      Begin Routine:
        #send the event code
        stim_marker('onset',SHOCK=False)

        #set the response colors to white
        animal_resp_color = 'white'
        tool_resp_color = 'white'
      Each Frame:
        #change the color of the response if one is pressed
        if '1' in trials_resp.keys:
            animal_resp_color = 'darkgrey'
        elif '2' in trials_resp.keys:
            tool_resp_color = 'darkgrey'
      End Routine:
        #send the event code
        stim_marker('offset',SHOCK=False)
    ImageComponent base_image
      image [set every repeat] = $stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent trials_resp
      allowedKeys = 'num_1','num_2','1!','2@','1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
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    TextComponent animal
      color [set every frame] = $animal_resp_color
      letterHeight = 0.03
      pos = (-.15, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        1
        animals
    TextComponent tool
      color [set every frame] = $tool_resp_color
      letterHeight = 0.03
      pos = (.15, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        2
        tools
  Routine in_end_experiment
    KeyboardComponent end_exp_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (end_exp_resp.keys)=='space'
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    TextComponent end_exp
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (end_exp_resp.keys)=='space'
      text = Experimenter press SPACE to exit the task.
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Flow
  Routine in1
  Routine in2
  Routine in3
  Routine ex_iti
  Routine ex_trial
  Routine in4
  Routine in_begin_experiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $f"data/{bidsID}/{bidsID}_ses-1_task-base_events-input.csv"
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial_type', 'CS-'), ('trial', 1), ('stimulus', 'stims/tools/woodchipper.jpg'), ('cs_duration', 5), ('iti_duration', 6), ('block', 1), ('trial_cs', 1)]),
      OrderedDict([('trial_type', 'CS+'), ('trial', 2), ('stimulus', 'stims/animals/anteater.jpg'), ('cs_duration', 5), ('iti_duration', 5), ('block', 1), ('trial_cs', 1)]),
      OrderedDict([('trial_type', 'CS-'), ('trial', 3), ('stimulus', 'stims/tools/broom.jpg'), ('cs_duration', 5), ('iti_duration', 6), ('block', 1), ('trial_cs', 2)]),
      OrderedDict([('trial_type', 'CS-'), ('trial', 4), ('stimulus', 'stims/tools/viceclamp.jpg'), ('cs_duration', 5), ('iti_duration', 7), ('block', 1), ('trial_cs', 3)]),
      OrderedDict([('trial_type', 'CS+'), ('trial', 5), ('stimulus', 'stims/animals/mouse.jpg'), ('cs_duration', 5), ('iti_duration', 5), ('block', 1), ('trial_cs', 2)]),
      OrderedDict([('trial_type', 'CS+'), ('trial', 6), ('stimulus', 'stims/animals/duck.jpg'), ('cs_duration', 5), ('iti_duration', 7), ('block', 1), ('trial_cs', 3)]),
      OrderedDict([('trial_type', 'CS-'), ('trial', 7), ('stimulus', 'stims/tools/vegetablepeeler.jpg'), ('cs_duration', 5), ('iti_duration', 7), ('block', 1), ('trial_cs', 4)]),
      OrderedDict([('trial_type', 'CS+'), ('trial', 8), ('stimulus', 'stims/animals/baldeagle.jpg'), ('cs_duration', 5), ('iti_duration', 5), ('block', 1), ('trial_cs', 4)]),
      OrderedDict([('trial_type', 'CS+'), ('trial', 9), ('stimulus', 'stims/animals/chipmunk.jpg'), ('cs_duration', 5), ('iti_duration', 5), ('block', 1), ('trial_cs', 5)])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
    Routine iti
    Routine trial
  LoopTerminator trials
  Routine in_end_experiment
