PsychoPy2experiment version="2022.1.1"
Settings
  Data filename = f'data/{bidsID}/{bidsID}_ses-1_task-{expName}_{expInfo["date"]}'
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-0.1765, -0.1765, -0.1765]
  expName = extinction-cc
  keyboardBackend = ioHub
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Routines
  Routine ex_iti
    PolygonComponent example_iti
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = (ex_iti.resp)=='space'
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    KeyboardComponent ex_iti_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (ex_iti_resp.keys)=='space'
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  Routine ex_trial
    KeyboardComponent ex_trials_resp
      allowedKeys = 'num_1','num_2','1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent ex_tool
      color = $ex_tool_resp_color
      letterHeight = 0.03
      pos = (.275, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        2
        tool
    TextComponent ex_animal
      color = $ex_animal_resp_color
      letterHeight = 0.03
      pos = (-.275, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        1
        animal
    CodeComponent col_code_ex
      Code Type = Py
      Before Experiment:
        #set the response colors to white
        ex_animal_resp_color = 'white'
        ex_tool_resp_color = 'white'
      Each Frame:
        #change the color of the response if one is pressed
        if 'num_1' in ex_trials_resp.keys:
            ex_animal_resp_color = 'darkgrey'
        elif 'num_2' in ex_trials_resp.keys:
            ex_tool_resp_color = 'darkgrey'
    ImageComponent image
      image = /Users/sophiabibb/Desktop/dunsmoor_lab/3191883_0.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine in_begin_experiment
    TextComponent beg_exp
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = (beg_exp_resp.keys)=='space'
      text = Press SPACE to continue the experiment.
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    KeyboardComponent beg_exp_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (beg_exp_resp.keys)=='space'
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    CodeComponent beg_exp_code
      Code Type = Py
      Before Experiment:
        from psychopy.parallel import ParallelPort
        from subprocess import Popen
        import time

        expName = 'extinction-cc'  # from the Builder filename that created this script
        dlg = gui.Dlg(title='Init participant')
        dlg.addField('participant', choices = [int(i.split('sub-MM')[-1]) for i in os.listdir('data') if 'sub-MM' in i])
        dlg.addField('room', choices =['VR', 'behavior']) #added 6/14
        dlg.addField('Init parallel port?', choices=['yes','no (testing)'])

        user_input = dlg.show()
        if dlg.OK == False:
            core.quit()  # user pressed cancel
        expInfo = {'participant':user_input[0]}
        bidsID = 'sub-MM{0:0=3d}'.format(int(expInfo['participant']))

        BIO = True if user_input[2] == 'yes' and user_input[1] == 'VR' else False #added 6/14
        BIO2 = True if user_input[2] == 'yes' and user_input[1] == 'behavior' else False #added 6/14

        if BIO:
            pport = ParallelPort(address='0xEFF8') #added 6/14
        elif BIO2:
            pport = ParallelPort(address='0x3FB8') #added 6/14
        else:
            class PortEmulator(object):
                def __init__(self, address=None):
                    pass
                def setData(self, data=None):
                    logging.warn("Sent data to non-existent PPort:{}".format(data))
                def setPin(self, pin, data):
                    logging.warn(f"Sent data to non-existent PPort pin: {pin}, {data}")
            pport = PortEmulator()

        pport.setData(0) #reset the pins

        def shock():
            pport.setPin(2,1)
            time.sleep(.005)
            pport.setPin(2,0)

        def stim_marker(on_or_offset='',SHOCK=False):
            if SHOCK:
                shock()
            if 'on' in on_or_offset:
                pport.setPin(4,1)
            elif 'off' in on_or_offset:
                pport.setPin(4,0)
  Routine iti
    TextComponent iti_animals
      letterHeight = 0.03
      pos = (-.15, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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      text:
        1
        Yes
    TextComponent iti_tools
      letterHeight = 0.03
      pos = (.15, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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      text:
        2
        No
    ImageComponent crosshair
      image = stims/whitecrosshair.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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  Routine trial
    KeyboardComponent trials_resp
      allowedKeys = 'num_1','num_2','1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
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    TextComponent animal
      color [set every frame] = $animal_resp_color
      letterHeight = 0.03
      pos = (-.15, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        1
        Yes
    TextComponent tool
      color [set every frame] = $tool_resp_color
      letterHeight = 0.03
      pos = (.15, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        2
        No
    ImageComponent ext_image
      image [set every repeat] = $stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent col_code
      Code Type = Py
      Begin Routine:
        #send the event code
        stim_marker('onset',SHOCK=False)

        #set the response colors to white
        animal_resp_color = 'white'
        tool_resp_color = 'white'
      Each Frame:
        #change the color of the response if one is pressed
        if 'num_1' in trials_resp.keys:
            animal_resp_color = 'darkgrey'
        elif 'num_2' in trials_resp.keys:
            tool_resp_color = 'darkgrey'
      End Routine:
        #send the event code
        stim_marker('offset',SHOCK=False)
  Routine in_end_experiment
    KeyboardComponent end_exp_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (end_exp_resp.keys)=='space'
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    TextComponent end_exp
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = (end_exp_resp.keys)=='space'
      text = Experimenter press SPACE to exit the task.
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  Routine cc
    ImageComponent cc_image
      image [set every repeat] = $cc_stimulus
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent cc_yes
      color [set every frame] = $cc_yescol
      letterHeight = 0.03
      pos = (-.15, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        1
        Yes
    TextComponent cc_no
      color [set every frame] = $cc_nocol
      letterHeight = 0.03
      pos = (.15, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        2
        No
    CodeComponent cc_code
      Code Type = Py
      Begin Routine:
        #send the event code
        stim_marker('onset',SHOCK=False)

        #set colors
        cc_yescol = 'dimgray'
        cc_nocol = 'dimgray'
      Each Frame:
        if cc_stimulus == 'stims/crosshair.png':
            cc_yescol = 'white'
            cc_nocol = 'white'
      End Routine:
        #send the event code
        stim_marker('offset',SHOCK=False)
Flow
  Routine in_begin_experiment
  LoopInitiator extcc_trials loopType="TrialHandler"
    conditionsFile = $f'data/{bidsID}/{bidsID}_ses-1_task-extcc_events-input.csv'
    loopType = sequential
    nReps = 1
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    Routine iti
    Routine trial
    Routine cc
  LoopTerminator extcc_trials
  Routine in_end_experiment
