PsychoPy2experiment version="2022.2.1"
Settings
  Data filename = f'data/{bidsID}/{bidsID}_ses-1_task-{expName}_{expInfo["date"]}'
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $[-0.1765, -0.1765, -0.1765]
  expName = renewal
  keyboardBackend = ioHub
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Routines
  Routine in2
    TextComponent inst2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst2_resp.keys)=='space'
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      text:
        The instructions for this task are the same as where you left off on your first session.

        That is, on each trial, I want you to rate whether or not you expect to receive a shock.

        Answer “Yes” or “No” to the following question by pressing the corresponding key on the keypad:

        Do you expect to receive a shock following this picture?

        1 = Yes
        2 = No

        Do you have any questions?
    KeyboardComponent inst2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst2_resp.keys)=='space'
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  Routine in1
    TextComponent inst1
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst1_resp.keys)=='space'
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      text:
        First, please make sure your cell phone is silenced.

        We will be measuring how much you are sweating from the sensors on your hand.

        These are very sensitive to movement and posture, so please sit up straight and do not shift around in your seat or move around during the experiment.

        Press SPACE to continue…
    KeyboardComponent inst1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst1_resp.keys)=='space'
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  Routine in3
    TextComponent inst3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst3_resp.keys)=='space'
      text = Press SPACE to begin the experiment.
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    KeyboardComponent inst3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst3_resp.keys)=='space'
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  Routine in4
    TextComponent inst4
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst4_resp.keys)=='space'
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      text:
        PLEASE MAKE A RESPONSE ON EVERY TRIAL, even if you are just guessing.

        We are measuring how fast you press the button.

        You only need to press a button when you see a picture.

        Press SPACE to continue with the instructions...
    KeyboardComponent inst4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst4_resp.keys)=='space'
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  Routine ex_iti
    PolygonComponent example_iti
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = (ex_iti.resp)=='space'
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    KeyboardComponent ex_iti_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (ex_iti_resp.keys)=='space'
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  Routine ex_trial
    KeyboardComponent ex_trials_resp
      allowedKeys = 'num_1','num_2','1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent ex_tool
      color = $ex_tool_resp_color
      letterHeight = 0.03
      pos = (.275, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        2
        tool
    TextComponent ex_animal
      color = $ex_animal_resp_color
      letterHeight = 0.03
      pos = (-.275, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        1
        animal
    CodeComponent col_code_ex
      Code Type = Py
      Before Experiment:
        #set the response colors to white
        ex_animal_resp_color = 'white'
        ex_tool_resp_color = 'white'
      Each Frame:
        #change the color of the response if one is pressed
        if 'num_1' in ex_trials_resp.keys:
            ex_animal_resp_color = 'darkgrey'
        elif 'num_2' in ex_trials_resp.keys:
            ex_tool_resp_color = 'darkgrey'
    ImageComponent image
      image = /Users/sophiabibb/Desktop/dunsmoor_lab/3191883_0.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine in5
    TextComponent inst5
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst5_resp.keys)=='space'
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      text:
        To recap:

        Your job is to answer "Yes" or "No" to whether you expect to receive a shock.

        Please note: You are NOT influencing the shocks with your button presses.
        In other words, you cannot trigger a shock or avoid a shock with your responses.
        To be clear: Pressing the "wrong" button will not give you a shock.

        Do you have any questions before we get started?
    KeyboardComponent inst5_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst5_resp.keys)=='space'
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  Routine in_6
    KeyboardComponent inst6_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst6_resp.keys)=='space'
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    TextComponent inst6
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst6_resp.keys)=='space'
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  Routine in_begin_experiment
    TextComponent beg_exp
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = (beg_exp_resp.keys)=='space'
      text = Press SPACE to begin the experiment.
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    KeyboardComponent beg_exp_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (beg_exp_resp.keys)=='space'
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    CodeComponent beg_exp_code
      Code Type = Py
      Before Experiment:
        from psychopy.parallel import ParallelPort
        from subprocess import Popen
        import time

        expName = 'renewal'  # from the Builder filename that created this script
        dlg = gui.Dlg(title='Init participant')
        dlg.addField('participant', choices = [int(i.split('sub-MM')[-1]) for i in os.listdir('data') if 'sub-MM' in i])
        dlg.addField('room', choices =['VR', 'behavior']) #added 6/14
        dlg.addField('Init parallel port?', choices=['yes','no (testing)'])

        user_input = dlg.show()
        if dlg.OK == False:
            core.quit()  # user pressed cancel
        expInfo = {'participant':user_input[0]}
        bidsID = 'sub-MM{0:0=3d}'.format(int(expInfo['participant']))

        BIO = True if user_input[2] == 'yes' and user_input[1] == 'VR' else False #added 6/14
        BIO2 = True if user_input[2] == 'yes' and user_input[1] == 'behavior' else False #added 6/14

        if BIO:
            pport = ParallelPort(address='0xEFF8') #added 6/14
        elif BIO2:
            pport = ParallelPort(address='0x3FB8') #added 6/14
        else:
            class PortEmulator(object):
                def __init__(self, address=None):
                    pass
                def setData(self, data=None):
                    logging.warn("Sent data to non-existent PPort:{}".format(data))
                def setPin(self, pin, data):
                    logging.warn(f"Sent data to non-existent PPort pin: {pin}, {data}")
            pport = PortEmulator()

        pport.setData(0) #reset the pins

        def shock():
            pport.setPin(2,1)
            time.sleep(.005)
            pport.setPin(2,0)

        def stim_marker(on_or_offset='',SHOCK=False):
            if SHOCK:
                shock()
            if 'on' in on_or_offset:
                pport.setPin(4,1)
            elif 'off' in on_or_offset:
                pport.setPin(4,0)
  Routine iti
    TextComponent iti_animals
      letterHeight = 0.03
      pos = (-.15, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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      text:
        1
        Yes
    TextComponent iti_tools
      letterHeight = 0.03
      pos = (.15, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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      text:
        2
        No
    ImageComponent crosshair
      image = stims/whitecrosshair.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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  Routine trial
    KeyboardComponent trials_resp
      allowedKeys = 'num_1','num_2','1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
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    TextComponent animal
      color [set every frame] = $animal_resp_color
      letterHeight = 0.03
      pos = (-.15, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        1
        Yes
    TextComponent tool
      color [set every frame] = $tool_resp_color
      letterHeight = 0.03
      pos = (.15, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        2
        No
    ImageComponent renewal_image
      image [set every repeat] = $stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent cs_code
      Code Type = Py
      Begin Routine:
        #send the event code
        stim_marker('onset',SHOCK=False)

        #set the response colors to white
        animal_resp_color = 'white'
        tool_resp_color = 'white'
      Each Frame:
        #change the color of the response if one is pressed
        if 'num_1' in trials_resp.keys:
            animal_resp_color = 'darkgrey'
        elif 'num_2' in trials_resp.keys:
            tool_resp_color = 'darkgrey'
      End Routine:
        #send the event code
        stim_marker('offset',SHOCK=False)
  Routine in_end_experiment
    KeyboardComponent end_exp_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (end_exp_resp.keys)=='space'
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    TextComponent end_exp
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = (end_exp_resp.keys)=='space'
      text = Experimenter press SPACE to exit the task.
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  Routine break_
    KeyboardComponent break_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (break_resp.keys)=='space'
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    TextComponent break_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [condition] = (break_resp.keys)=='space'
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      text:
        This is a short break.

        Please remain as still as possible and do not check your phone.

        When you are ready to continue with the experiment, press SPACE.
Flow
  Routine in1
  Routine in2
  Routine in3
  Routine in_begin_experiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $f'data/{bidsID}/{bidsID}_ses-2_task-renewal_events-input.csv'
    loopType = sequential
    nReps = 1
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    Routine iti
    Routine trial
  LoopTerminator trials
  Routine in_end_experiment
