PsychoPy2experiment version="2023.1.3"
Settings
  Data filename = f'data/{bidsID}/{bidsID}_ses-2_task-{expName}_{expInfo["date"]}'
  Experiment info = {'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1512, 982]
  color = $[-0.1765, -0.1765, -0.1765]
  expName = bps1
  keyboardBackend = Pyglet
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Routines
  Routine in2
    TextComponent inst2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now we are going to test your memory for the pictures that you saw on your first visit.
        Please let us know whether you expected a memory test today:


        1 = No, I did not expect a memory test at all.

        2 = I am somewhat surprised by this memory test.

        3 = I am only a little surprised by a memory test.

        4 = I somewhat expected a memory test.

        5 = Yes, I knew there would be a memory test.
    KeyboardComponent inst2_resp
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine in1
    TextComponent inst1
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Before we continue with today’s experiment, do you have any expectations about what this next task will involve?

        Press 1 for No
        Press 2 for Yes
    KeyboardComponent inst1_resp
      allowedKeys = '1','2', "num_1", "num_2"
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine in3
    TextComponent inst3
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        For each picture, please indicate whether you saw the picture on your first visit (it is “OLD”), or whether you did NOT see the picture on your first visit (it is “NEW”).

        You will rate the confidence of your decision by indicating whether the picture is:

        H = Definitely old
        J = Maybe old
        K = Maybe new
        L = Definitely new

        You will answer by pressing the corresponding letter underneath the picture: either H, J, K, or L.

        Each trial is separated by a fixation cross (+) and you do not need to press any letters during the fixation cross.

        You will not be receiving any shocks during this portion of the experiment.

        Press SPACE to continue…
    KeyboardComponent inst3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine in4
    TextComponent inst4
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The memory test is self-paced, meaning that you can take as long as you need on each trial.

        However, try to go at a good pace and try not to spend too much time on any one trial.

        Any questions?
    KeyboardComponent inst4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine in_begin_experiment
    TextComponent beg_exp
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (beg_exp_resp.keys)=='space'
      text = Press SPACE to begin the experiment.
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    KeyboardComponent beg_exp_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (beg_exp_resp.keys)=='space'
      store = nothing
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    CodeComponent beg_exp_code
      Code Type = Py
      Before Experiment:
        expName = 'bps1'  # from the Builder filename that created this script
        dlg = gui.Dlg(title='Init participant')
        dlg.addField('participant', choices = [int(i.split('sub-PYG')[-1]) for i in os.listdir('data') if 'sub-PYG' in i])

        user_input = dlg.show()

        if dlg.OK == False:
            core.quit()  # user pressed cancel
        expInfo = {'participant':user_input[0]}
        bidsID = 'sub-PYG{0:0=3d}'.format(int(expInfo['participant']))
  Routine iti
    TextComponent iti_question
      letterHeight = 0.03
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text = Is this picture OLD or NEW?
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    ImageComponent crosshair
      image = stims/whitecrosshair.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    TextComponent defold_iti
      letterHeight = 0.02
      pos = (-.25,-.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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      text:
        1
        Definitely old
    TextComponent maybeold_iti
      letterHeight = 0.02
      pos = (-.08,-.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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      text:
        2
        Maybe old
    TextComponent maybenew_iti
      letterHeight = 0.02
      pos = (.08,-.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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      text:
        3
        Maybe new
    TextComponent defnew_iti
      letterHeight = 0.02
      pos = (.25,-.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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      text:
        4
        Definitely new
  Routine trial
    ImageComponent mem_image
      image [set every repeat] = $stim
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent mem_question
      letterHeight = 0.03
      pos = (0,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Is this picture OLD or NEW?
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    TextComponent def_old
      color [set every frame] = white
      letterHeight = 0.02
      pos = (-.25, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1
        Definitely old
    TextComponent maybe_old
      letterHeight = 0.02
      pos = (-.08,-.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        2
        Maybe old
    TextComponent maybe_new
      letterHeight = 0.02
      pos = (.08,-.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        3
        Maybe new
    TextComponent def_new
      letterHeight = 0.02
      pos = (.25, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        4
        Definitely new
    KeyboardComponent mem_resp
      allowedKeys [set every repeat] = '1', '2', '3', '4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine in_end_experiment
    KeyboardComponent end_exp_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (end_exp_resp.keys)=='space'
      store = nothing
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    TextComponent end_exp
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (end_exp_resp.keys)=='space'
      text = Please wait for the experimenter to continue with the task.
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    CodeComponent code
      Code Type = Py
      End Experiment:
        thisExp.saveAsWideText(filename + '.csv')

        # Clean up the file
        import pandas as pd
        import os

        filename = f'data/{bidsID}/{bidsID}_ses-2_task-{expName}_{expInfo["date"]}'

        try:
            df = pd.read_csv(filename + '.csv')

            cols_to_drop = [
                'bps1_trials.thisRepN',
                'bps1_trials.thisTrialN',
                'bps1_trials.thisN',
                'bps1_trials.thisIndex'
            ]

            df = df.drop(columns=[col for col in cols_to_drop if col in df.columns])

            #  Overwrite the original file with the cleaned version
            df.to_csv(filename + '.csv', index=False)

        except Exception as e:
            print(f"Failed to clean data file: {e}")
  Routine trial_button
    ImageComponent stimulus2
      image [set every repeat] = $stim
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    TextComponent mem_question2
      letterHeight = 0.03
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Is this picture OLD or NEW?
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    TextComponent def_old2
      color [set every frame] = $def_old2_col
      letterHeight = 0.02
      pos = (-.25, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text:
        1
        Definitely old
    TextComponent maybe_old2
      color [set every frame] = $maybe_old2_col
      letterHeight = 0.02
      pos = (-.08,-.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text:
        2
        Maybe old
    TextComponent maybe_new2
      color [set every frame] = $maybe_new2_col
      letterHeight = 0.02
      pos = (.08,-.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text:
        3
        Maybe new
    TextComponent def_new2
      color [set every frame] = $def_new2_col
      letterHeight = 0.02
      pos = (.25, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text:
        4
        Definitely new
    CodeComponent col_code
      Code Type = Py
      Begin Experiment:
        def_old2_col = 'white'
        maybe_old2_col = 'white'
        maybe_new2_col = 'white'
        def_new2_col = 'white'
      Begin Routine:
        def_old2_col = 'white'
        maybe_old2_col = 'white'
        maybe_new2_col = 'white'
        def_new2_col = 'white'
      Each Frame:
        if '1' in mem_resp.keys:
            def_old2_col = 'darkgray'
            maybe_old2_col = 'white'
            maybe_new2_col = 'white'
            def_new2_col = 'white'
        elif '2' in mem_resp.keys:
            def_old2_col = 'white'
            maybe_old2_col = 'darkgray'
            maybe_new2_col = 'white'
            def_new2_col = 'white'
        elif '3' in mem_resp.keys:
            def_old2_col = 'white'
            maybe_old2_col = 'white'
            maybe_new2_col = 'darkgray'
            def_new2_col = 'white'
        elif '4' in mem_resp.keys:
            def_old2_col = 'white'
            maybe_old2_col = 'white'
            maybe_new2_col = 'white'
            def_new2_col = 'darkgray'
Flow
  Routine in1
  Routine in2
  Routine in3
  Routine in4
  Routine in_begin_experiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $f'data/{bidsID}/{bidsID}_ses-2_task-bps1_events-input.csv'
    loopType = sequential
    nReps = 1
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    Routine iti
    Routine trial
    Routine trial_button
  LoopTerminator trials
  Routine in_end_experiment
