PsychoPy2experiment version="2023.1.3"
Settings
  Data filename = f'data/{bidsID}/{bidsID}_ses-2_task-{expName}_{expInfo["date"]}'
  Experiment info = {'session': '2'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1512, 982]
  color = $[-0.1765, -0.1765, -0.1765]
  expName = soutyp
  keyboardBackend = Pyglet
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Routines
  Routine in2
    TextComponent inst2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst2_resp.keys)=='space'
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      text:
        If you recall, the experiment on your first visit was divided into 3 different phases:

        Phase 1 was at the beginning, when you were classifying each picture as either an animal or a tool.

        Phase 2 was in the middle, when you received shocks following some of the pictures.

        Phase 3 was last, when you received no shocks.


        Press SPACE to continue…
    KeyboardComponent inst2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst2_resp.keys)=='space'
      store = nothing
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  Routine in1
    TextComponent inst1
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst1_resp.keys)=='space'
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      text:
        Now we would like to ask you some questions about the pictures that you saw on your first visit.

        Specifically, we are going to ask you:

        WHEN did you see each picture, and

        How TYPICAL is the picture for its category.

        Press SPACE to continue…
    KeyboardComponent inst1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst1_resp.keys)=='space'
      store = nothing
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    CodeComponent init_code
      Code Type = Py
      Before Experiment:
        expName = 'sourcetyp'  # from the Builder filename that created this script
        dlg = gui.Dlg(title='Init participant')
        dlg.addField('participant', choices = [int(i.split('sub-PYG')[-1]) for i in os.listdir('data') if 'sub-PYG' in i])

        user_input = dlg.show()

        if dlg.OK == False:
            core.quit()  # user pressed cancel
        expInfo = {'participant':user_input[0]}
        bidsID = 'sub-PYG{0:0=3d}'.format(int(expInfo['participant']))
  Routine in3
    TextComponent inst3
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst3_resp.keys)=='space'
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      text:
        The first question you will answer about each picture is:

        When did you see this picture?

        To the best of your ability, you will answer:

        Phase 1,
        Phase 2, or
        Phase 3

        For this task, you will respond by clicking the correct dot underneath the photo with your mouse.
        We will have some practice trials to help orient you to this task.

        Note that all of the pictures you will see in this task were shown to you during the experiment on your first visit.
        (There are no “new” pictures.)

        If you have any questions about these instructions, please ask your experimenter.

        Press SPACE to continue…
    KeyboardComponent inst3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst3_resp.keys)=='space'
      store = nothing
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  Routine in4
    TextComponent inst4
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst4_resp.keys)=='space'
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      text:
        We will now go over the second question that we will ask about each picture:

        How TYPICAL is this picture for its category?

        In other words, you will rate how representative a picture is of the entire category.

        For example, an apple is a typical fruit, as it is very representative of the entire fruit category. On the other hand, a dragonfruit is not a typical fruit, at least in American grocery stores.

        Press SPACE to continue…
    KeyboardComponent inst4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst4_resp.keys)=='space'
      store = nothing
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  Routine ex_iti
    PolygonComponent example_iti
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = (ex_iti.resp)=='space'
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    KeyboardComponent ex_iti_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (ex_iti_resp.keys)=='space'
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  Routine ex_trial
    KeyboardComponent ex_trials_resp
      allowedKeys = 'num_1','num_2','1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent ex_tool
      color = $ex_tool_resp_color
      letterHeight = 0.03
      pos = (.275, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        2
        tool
    TextComponent ex_animal
      color = $ex_animal_resp_color
      letterHeight = 0.03
      pos = (-.275, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        1
        animal
    CodeComponent col_code_ex
      Code Type = Py
      Before Experiment:
        #set the response colors to white
        ex_animal_resp_color = 'white'
        ex_tool_resp_color = 'white'
      Each Frame:
        #change the color of the response if one is pressed
        if 'num_1' in ex_trials_resp.keys:
            ex_animal_resp_color = 'darkgrey'
        elif 'num_2' in ex_trials_resp.keys:
            ex_tool_resp_color = 'darkgrey'
    ImageComponent image
      image = /Users/sophiabibb/Desktop/dunsmoor_lab/3191883_0.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine in5
    TextComponent inst5
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst5_resp.keys)=='space'
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      text:
        You will provide your rating using a scale.
        For this scale, you can answer:

        Not at all typical
        Somewhat typical
        Very typical

        As an example, on this scale an apple would be rated very highly as it is a very typical fruit, and a dragonfruit would be rated very low because it is a very atypical fruit.

        Remember that you can click on any of the dots from 1 to 7 on the scale.

        Press SPACE to continue…
    KeyboardComponent inst5_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst5_resp.keys)=='space'
      store = nothing
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  Routine in_begin_experiment
    TextComponent beg_exp
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (beg_exp_resp.keys)=='space'
      text = Press SPACE to begin the experiment.
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    KeyboardComponent beg_exp_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (beg_exp_resp.keys)=='space'
      store = nothing
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  Routine iti
    ImageComponent crosshair
      image = stims/whitecrosshair.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine in_end_experiment
    KeyboardComponent end_exp_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (end_exp_resp.keys)=='space'
      store = nothing
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    TextComponent end_exp
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (end_exp_resp.keys)=='space'
      text = Experimenter press SPACE to exit the task.
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  Routine break_
    KeyboardComponent break_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (break_resp.keys)=='space'
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    TextComponent break_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [condition] = (break_resp.keys)=='space'
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      text:
        This is a short break.

        Please remain as still as possible and do not check your phone.

        When you are ready to continue with the experiment, press SPACE.
  Routine sou
    KeyboardComponent sou_resp
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent sou_pic
      image [set every repeat] = $stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent sou_question
      letterHeight = 0.03
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = When did you see this picture?
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    SliderComponent sou_slider
      forceEndRoutine = True
      granularity = 1
      labels = ['Phase 1', 'Phase 2', 'Phase 3']
      letterHeight = 0.03
      pos = (0, -0.325)
      saveStartStop = False
      size = (0.35, 0.05)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3)
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  Routine typ
    KeyboardComponent typ_resp
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent typ_pic
      image [set every repeat] = $stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent typ_question
      letterHeight = 0.03
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How typical is this picture?
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    SliderComponent typ_slider
      forceEndRoutine = True
      granularity = 1
      labels = ['Not', 'Somewhat', 'Very']
      letterHeight = 0.03
      pos = (0, -0.325)
      saveStartStop = False
      size = (0.6, 0.05)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine val
    ImageComponent val_pic
      image [set every repeat] = $stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent val_resp
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent val_question
      letterHeight = 0.03
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = How much did you LIKE this image?
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    SliderComponent val_slider
      forceEndRoutine = True
      granularity = 1
      labels = ['Strongly disliked', 'Neutral', 'Strongly liked']
      letterHeight = 0.03
      pos = (0, -0.325)
      saveStartStop = False
      size = (0.6, 0.05)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine in7
    TextComponent inst7
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = inst7_resp.keys=='space'
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      text:
        You will provide your rating using a scale.
        For this scale, you can answer:

        Strongly disliked
        Neutral
        Strongly liked

        Please do your best to ONLY consider your reactions to these types of images DURING the task, and not at other points in your life.

        As with typicality, you can use any of the buttons on the scale describe how you felt about the image on the screen during the task.

        Press SPACE to continue…
    KeyboardComponent inst7_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = inst7_resp.keys=='space'
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  Routine in6
    TextComponent inst6
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst6_resp.keys)=='space'
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      text:
        Finally, we will ask you how much you LIKED or DISLIKED that image during the task.

        Please consider how you felt in response to seeing the image DURING the computerized task.


        Press SPACE to continue…
    KeyboardComponent inst6_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst6_resp.keys)=='space'
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  Routine in8
    TextComponent inst8
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = inst8_resp.keys=='space'
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      text:
        To recap:

        You will see a picture that you saw on your first visit in the middle of the screen. First, you will tell us WHEN you saw this picture:
        Phase 1 (no shocks, categorizing photos),
        Phase 2 (photos and shocks), or
        Phase 3 (photos and no shocks).

        You will then rate how TYPICAL that same picture is for its category, on a scale of
        1 (least typical) to
        7 (most typical).

        Do you have any questions about these instructions? If so, please ask your experimenter now.
    KeyboardComponent inst8_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = inst8_resp.keys=='space'
      store = nothing
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  Routine prac_iti
    ImageComponent prac_crosshair
      image = stims/whitecrosshair.png
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine prac_sou
    TextComponent prac_when
      letterHeight = 0.03
      pos = (0, .32)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        When did you see this picture?
        (For this example, respond as if this were a picture you saw when you were getting shocked.)
    ImageComponent pracwhen_image
      image = stims/banana.jpg
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent pracwhen_code
      Code Type = Py
      End Routine:
        if pracsou_slider.rating in [2]:
            soufeedback_text.text = 'Correct! Phase 2 was when you received shocks.\n\nPress any button to continue...'
        elif pracsou_slider.rating in [1]:
                soufeedback_text.text = 'Incorrect. Remember, Phase 1 was when you were classifying animals and tools.\n\nPress any space to continue...'
        elif pracsou_slider.rating in [3]:
                soufeedback_text.text = 'Remember, Phase 3 was when you received no shocks.\n\nPress space to continue...'
    SliderComponent pracsou_slider
      forceEndRoutine = True
      granularity = 1
      labels = ['Phase 1', 'Phase 2', 'Phase 3']
      letterHeight = 0.03
      pos = (0, -0.325)
      saveStartStop = False
      size = (0.35, 0.05)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3)
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  Routine prac_typ
    CodeComponent practyp_code
      Code Type = Py
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      End Routine:
        if practyp_slider.rating in [5, 6, 7]:
            typfeedback_text.text = 'Correct! Bananas are a very typical fruit.\n\nPress any button to continue...'
        elif practyp_slider.rating in [1, 2, 3, 4]:
            typfeedback_text.text = 'Incorrect. A fruit that is more typical should be rated more highly on this scale. Because bananas are very typical fruits, they should have been rated more highly.\n\nPress SPACE to continue with practice trial...'
    ImageComponent practyp_image
      image = stims/banana.jpg
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent practyp_resp
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent practyp_question
      letterHeight = 0.03
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How typical is this picture?
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    SliderComponent practyp_slider
      forceEndRoutine = True
      granularity = 1
      labels = ['Not', 'Somewhat', 'Very']
      letterHeight = 0.03
      pos = (0, -0.325)
      saveStartStop = False
      size = (0.6, 0.05)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine prac_val
    ImageComponent pracval_image
      image = stims/banana.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent pracval_resp
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent pracval_question
      letterHeight = 0.03
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = How much did you LIKE this image?
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    SliderComponent pracval_slider
      forceEndRoutine = True
      granularity = 0
      labels = ['Strongly disliked', 'Neutral', 'Strongly liked']
      letterHeight = 0.03
      pos = (0, -0.325)
      saveStartStop = False
      size = (0.6, 0.05)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine sou_feedback
    KeyboardComponent soufeedback_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = soufeedback_resp.keys=='space'
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    TextComponent soufeedback_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = soufeedback_resp.keys=='space'
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  Routine prep_practrials
    TextComponent inst_practrials
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = inst_practrials_resp.keys=='space'
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      text:
        We are now going to do a practice trial so you can become familiar with this task.

        Press SPACE to begin the practice trial.
    KeyboardComponent inst_practrials_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = inst_practrials_resp.keys=='space'
      store = nothing
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  Routine typ_feedback
    TextComponent typfeedback_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = typfeedback_resp.keys=='space'
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    KeyboardComponent typfeedback_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = typfeedback_resp.keys=='space'
      store = nothing
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  Routine val_feedback
    KeyboardComponent valfeedback_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = valfeedback_resp.keys=='space'
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    TextComponent valfeedback_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = valfeedback_resp.keys=='space'
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      text:
        Great! The number you pressed should reflect how you felt about the image of the banana.

        If you have any questions about this task, ask your experimenter now.
  Routine big_iti
    ImageComponent long_crosshair
      image = stims/whitecrosshair.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine in1
  Routine in2
  Routine in3
  Routine in4
  Routine in5
  Routine in8
  Routine prep_practrials
  Routine prac_iti
  Routine prac_sou
  Routine sou_feedback
  Routine prac_iti
  Routine prac_typ
  Routine typ_feedback
  Routine in_begin_experiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $f'data/{bidsID}/{bidsID}_ses-2_task-soutyp_events-input.csv'
    loopType = sequential
    nReps = 1
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    Routine big_iti
    Routine sou
    Routine iti
    Routine typ
  LoopTerminator trials
  Routine in_end_experiment
