PsychoPy2experiment version="2023.1.3"
Settings
  Data filename = f'data/{bidsID}/{bidsID}_ses-2_task-{expName}_{expInfo["date"]}'
  Experiment info = {'session': '2'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1512, 982]
  color = $[-0.1765, -0.1765, -0.1765]
  expName = bps3
  keyboardBackend = Pyglet
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Routines
  Routine in_begin_experiment
    TextComponent beg_exp
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (beg_exp_resp.keys)=='space'
      text = Press SPACE to begin the experiment.
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    KeyboardComponent beg_exp_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (beg_exp_resp.keys)=='space'
      store = nothing
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    CodeComponent beg_exp_code
      Code Type = Py
      Before Experiment:
        expName = 'bps1'  # from the Builder filename that created this script
        dlg = gui.Dlg(title='Init participant')
        dlg.addField('participant', choices = [int(i.split('sub-PYG')[-1]) for i in os.listdir('data') if 'sub-PYG' in i])

        user_input = dlg.show()

        if dlg.OK == False:
            core.quit()  # user pressed cancel
        expInfo = {'participant':user_input[0]}
        bidsID = 'sub-PYG{0:0=3d}'.format(int(expInfo['participant']))
  Routine iti
    TextComponent iti_question
      letterHeight = 0.03
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text = Is this picture OLD or NEW?
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    ImageComponent crosshair
      image = stims/whitecrosshair.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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    TextComponent defold_iti
      letterHeight = 0.02
      pos = (-.25,-.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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      text:
        1
        Definitely old
    TextComponent maybeold_iti
      letterHeight = 0.02
      pos = (-.08,-.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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      text:
        2
        Maybe old
    TextComponent maybenew_iti
      letterHeight = 0.02
      pos = (.08,-.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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      text:
        3
        Maybe new
    TextComponent defnew_iti
      letterHeight = 0.02
      pos = (.25,-.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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      text:
        4
        Definitely new
  Routine trial
    ImageComponent mem_image
      image [set every repeat] = $stim
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent mem_question
      letterHeight = 0.03
      pos = (0,.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Is this picture OLD or NEW?
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    TextComponent def_old
      color [set every frame] = white
      letterHeight = 0.02
      pos = (-.25, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1
        Definitely old
    TextComponent maybe_old
      letterHeight = 0.02
      pos = (-.08,-.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        2
        Maybe old
    TextComponent maybe_new
      letterHeight = 0.02
      pos = (.08,-.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        3
        Maybe new
    TextComponent def_new
      letterHeight = 0.02
      pos = (.25, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        4
        Definitely new
    KeyboardComponent mem_resp
      allowedKeys [set every repeat] = '1', '2', '3', '4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine in_end_experiment
    KeyboardComponent end_exp_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (end_exp_resp.keys)=='space'
      store = nothing
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    TextComponent end_exp
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (end_exp_resp.keys)=='space'
      text = Please wait for the experimenter to continue with the task.
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    CodeComponent code
      Code Type = Py
      End Experiment:
        thisExp.saveAsWideText(filename + '.csv')

        # Clean up the file
        import pandas as pd
        import os

        filename = f'data/{bidsID}/{bidsID}_ses-2_task-{expName}_{expInfo["date"]}'

        try:
            df = pd.read_csv(filename + '.csv')

            cols_to_drop = [
                'bps3_trials.thisRepN',
                'bps3_trials.thisTrialN',
                'bps3_trials.thisN',
                'bps3_trials.thisIndex'
            ]

            df = df.drop(columns=[col for col in cols_to_drop if col in df.columns])

            #  Overwrite the original file with the cleaned version
            df.to_csv(filename + '.csv', index=False)

        except Exception as e:
            print(f"Failed to clean data file: {e}")
  Routine trial_button
    ImageComponent stimulus2
      image [set every repeat] = $stim
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    TextComponent mem_question2
      letterHeight = 0.03
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Is this picture OLD or NEW?
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    TextComponent def_old2
      color [set every frame] = $def_old2_col
      letterHeight = 0.02
      pos = (-.25, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text:
        1
        Definitely old
    TextComponent maybe_old2
      color [set every frame] = $maybe_old2_col
      letterHeight = 0.02
      pos = (-.08,-.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text:
        2
        Maybe old
    TextComponent maybe_new2
      color [set every frame] = $maybe_new2_col
      letterHeight = 0.02
      pos = (.08,-.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text:
        3
        Maybe new
    TextComponent def_new2
      color [set every frame] = $def_new2_col
      letterHeight = 0.02
      pos = (.25, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text:
        4
        Definitely new
    CodeComponent col_code
      Code Type = Py
      Begin Experiment:
        def_old2_col = 'white'
        maybe_old2_col = 'white'
        maybe_new2_col = 'white'
        def_new2_col = 'white'
      Begin Routine:
        def_old2_col = 'white'
        maybe_old2_col = 'white'
        maybe_new2_col = 'white'
        def_new2_col = 'white'
      Each Frame:
        if '1' in mem_resp.keys:
            def_old2_col = 'darkgray'
            maybe_old2_col = 'white'
            maybe_new2_col = 'white'
            def_new2_col = 'white'
        elif '2' in mem_resp.keys:
            def_old2_col = 'white'
            maybe_old2_col = 'darkgray'
            maybe_new2_col = 'white'
            def_new2_col = 'white'
        elif '3' in mem_resp.keys:
            def_old2_col = 'white'
            maybe_old2_col = 'white'
            maybe_new2_col = 'darkgray'
            def_new2_col = 'white'
        elif '4' in mem_resp.keys:
            def_old2_col = 'white'
            maybe_old2_col = 'white'
            maybe_new2_col = 'white'
            def_new2_col = 'darkgray'
Flow
  Routine in_begin_experiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $f'data/{bidsID}/{bidsID}_ses-2_task-bps3_events-input.csv'
    loopType = sequential
    nReps = 1
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    Routine iti
    Routine trial
    Routine trial_button
  LoopTerminator trials
  Routine in_end_experiment
