PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = f'data/{bidsID}/{bidsID}_ses-2_task-{expName}_{expInfo["date"]}'
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-0.1765, -0.1765, -0.1765]
  expName = arouval
  keyboardBackend = ioHub
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Routines
  Routine in2
    TextComponent inst2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst2_resp.keys)=='space'
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      text:
        VALENCE describes how much you like an image. Please click the dot that best describes how much you liked each image during the study.

        AROUSAL/ACTIVATION, in this case, is defined as feelings of attentiveness, alertness or activity. The opposite of arousal is boredom or relaxation. Arousal can often cause physiological changes such as increased heart rate. Please click the dot that best describes how aroused each image made you feel during the study.

        Press SPACE to continue...
    KeyboardComponent inst2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst2_resp.keys)=='space'
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  Routine in1
    TextComponent inst1
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst1_resp.keys)=='space'
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      text:
        Before you go, we would like to ask you two last questions about the pictures that you saw on your first visit (i.e., these are all OLD pictures).

        Specifically, we are going to ask you how much you LIKED the picture during the study (i.e. VALENCE) and
        how AROUSED/ACTIVATED the picture made you feel during the study.

        Please consider how you felt in response to seeing the image DURING the computerized task ONLY.

        Press SPACE to continue…
    KeyboardComponent inst1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst1_resp.keys)=='space'
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    CodeComponent init_code
      Code Type = Py
      Before Experiment:
        import pandas as pd
        import os

        expName = 'arouval'  # from the Builder filename that created this script
        dlg = gui.Dlg(title='Init participant')
        dlg.addField('participant', choices = [int(i.split('sub-MM')[-1]) for i in os.listdir('data') if 'sub-MM' in i])

        user_input = dlg.show()

        if dlg.OK == False:
            core.quit()  # user pressed cancel
        expInfo = {'participant':user_input[0]}
        bidsID = 'sub-MM{0:0=3d}'.format(int(expInfo['participant']))

        home_dir = os.path.expanduser('~')
        data_dir = os.path.join(home_dir, 'Desktop', 'mrs-m', 'experiment', 'data', bidsID)
        input_dir = os.path.join(home_dir,'Desktop', 'mrs-m', 'experiment', 'stims')
        os.chdir(data_dir)

        #RENEWAL STIMS
        renewal_input = pd.read_csv(f'{bidsID}_ses-2_task-renewal_events-input.csv')
        renewal_stims = renewal_input['stimulus'].values
        renewal_stims_trials_phase = renewal_input[['stimulus', 'trial', 'trial_type']].drop(labels=0)
        renewal_stims_trials_phase['us'] = 0 #to give all the dataframes the same columns so i can concatenate later
        renewal_stims_trials_phase['phase'] = 'renewal'
        print(renewal_stims_trials_phase)

        #BASE STIMS
        base_input = pd.read_csv(f'{bidsID}_ses-1_task-base_events-input.csv')
        base_stims = base_input['stimulus'].values
        base_stims_trials_phase = base_input[['stimulus', 'trial', 'trial_type']]
        base_stims_trials_phase['us'] = 0 #to give all the dataframes the same columns so i can concatenate later
        base_stims_trials_phase['phase'] = 'base'
        print(base_stims_trials_phase)

        #FEAR STIMS
        fear_input = pd.read_csv(f'{bidsID}_ses-1_task-fear_events-input.csv')
        fear_stims = fear_input['stimulus'].values
        fear_stims_trials_phase = fear_input[['stimulus', 'trial', 'trial_type', 'us']] #Select these columns
        fear_stims_trials_phase['phase'] = 'fear' #Create a column for the phase so I can keep them straight
        #Drop the CSs that were shocked to:
        fear_stims_trials_phase = fear_stims_trials_phase.set_index('us')
        fear_stims_trials_phase = fear_stims_trials_phase.drop(index=1)
        #Reset the index so that us isn't the index anymore
        fear_stims_trials_phase = fear_stims_trials_phase.reset_index()
        print(fear_stims_trials_phase)

        #EXTCC STIMS
        extcc_input = pd.read_csv(f'{bidsID}_ses-1_task-extcc_events-input.csv')
        extcc_stims = extcc_input['stimulus'].values
        extcc_stims_trials_phase = extcc_input[['stimulus', 'trial', 'trial_type']]
        extcc_stims_trials_phase['us'] = 0 #to give all the dataframes the same columns so i can concatenate later
        extcc_stims_trials_phase['phase'] = 'extcc'
        print(extcc_stims_trials_phase)


        #RENEWAL: select the stims
        renewal_stims_trials_phase = renewal_stims_trials_phase.set_index('trial_type')
        renewal_stims_csm = renewal_stims_trials_phase.loc['CS-'].sample(n=5).reset_index()
        renewal_stims_csp = renewal_stims_trials_phase.loc['CS+'].sample(n=5).reset_index()
        renewal_stims = pd.concat([renewal_stims_csp, renewal_stims_csm])
        print(renewal_stims)

        base_stims_trials_phase = base_stims_trials_phase.set_index('trial_type')
        base_stims_csm = base_stims_trials_phase.loc['CS-'].sample(n=5).reset_index()
        base_stims_csp = base_stims_trials_phase.loc['CS+'].sample(n=5).reset_index()
        base_stims = pd.concat([base_stims_csp, base_stims_csm])
        print(base_stims)

        fear_stims_trials_phase = fear_stims_trials_phase.set_index('trial_type')
        fear_stims_csm = fear_stims_trials_phase.loc['CS-'].sample(n=5).reset_index()
        fear_stims_csp = fear_stims_trials_phase.loc['CS+'].sample(n=5).reset_index()
        fear_stims = pd.concat([fear_stims_csp, fear_stims_csm])
        print(fear_stims)

        extcc_stims_trials_phase = extcc_stims_trials_phase.set_index('trial_type')
        extcc_stims_csm = extcc_stims_trials_phase.loc['CS-'].sample(n=5).reset_index()
        extcc_stims_csp = extcc_stims_trials_phase.loc['CS+'].sample(n=5).reset_index()
        extcc_stims = pd.concat([extcc_stims_csp, extcc_stims_csm])
        print(extcc_stims)

        all_stims = pd.concat([base_stims, fear_stims, extcc_stims, renewal_stims])
        all_stims.rename(columns={'trial': 'original_trial'})
        print(all_stims)

        #FILL IN THE TEMPLATE WITH ALL MY STIMS

        #import the template
        arouval_df = pd.read_csv('../../task_templates/arouval_template.csv').set_index(['trial_type', 'phase'])
        all_stims = all_stims.set_index(['trial_type', 'phase'])

        for con in ['CS-', 'CS+']:
            for phase in ['base', 'fear', 'extcc', 'renewal']:
                arouval_df.loc[(con, phase), 'stimulus'] = all_stims.loc[(con, phase)]

        arouval_df.reset_index()

        arouval_df.to_csv(f'{bidsID}_ses-2_task-arouval_events-input.csv')
  Routine in3
    TextComponent inst3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst3_resp.keys)=='space'
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      text:
        The first question you will answer about each picture is:

        When did you see this picture?

        To the best of your ability, you will answer:

        Phase 1,
        Phase 2, or
        Phase 3

        Like with the last task, you will respond by clicking the correct dot with your mouse.

        All of the pictures you will see in this task were shown to you during the experiment yesterday.
        (There are no “new” pictures.)

        If you have any questions about these instructions, please ask your experimenter.

        Press SPACE to continue…
    KeyboardComponent inst3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst3_resp.keys)=='space'
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  Routine in4
    TextComponent inst4
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst4_resp.keys)=='space'
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      text:
        We will now go over the second question that we will ask about each picture:

        How TYPICAL is this picture for its category?

        In other words, you will rate how representative a picture is of the entire category.

        For example, an apple is a typical fruit, as it is very representative of the entire fruit category. On the other hand, a dragonfruit is not a typical fruit, at least in American grocery stores.

        Press SPACE to continue…
    KeyboardComponent inst4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst4_resp.keys)=='space'
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  Routine ex_iti
    PolygonComponent example_iti
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = (ex_iti.resp)=='space'
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    KeyboardComponent ex_iti_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (ex_iti_resp.keys)=='space'
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  Routine ex_trial
    KeyboardComponent ex_trials_resp
      allowedKeys = 'num_1','num_2','1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent ex_tool
      color = $ex_tool_resp_color
      letterHeight = 0.03
      pos = (.275, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        2
        tool
    TextComponent ex_animal
      color = $ex_animal_resp_color
      letterHeight = 0.03
      pos = (-.275, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        1
        animal
    CodeComponent col_code_ex
      Code Type = Py
      Before Experiment:
        #set the response colors to white
        ex_animal_resp_color = 'white'
        ex_tool_resp_color = 'white'
      Each Frame:
        #change the color of the response if one is pressed
        if 'num_1' in ex_trials_resp.keys:
            ex_animal_resp_color = 'darkgrey'
        elif 'num_2' in ex_trials_resp.keys:
            ex_tool_resp_color = 'darkgrey'
    ImageComponent image
      image = /Users/sophiabibb/Desktop/dunsmoor_lab/3191883_0.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine in5
    TextComponent inst5
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst5_resp.keys)=='space'
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      text:
        You will provide your rating using a scale.
        For this scale, you can answer:

        Not at all typical
        Somewhat typical
        Very typical

        As an example, on this scale an apple would be rated very highly as it is a very typical fruit, and a dragonfruit would be rated very low because it is a very atypical fruit.

        Remember that you can click on any of the dots from 1 to 7 on the scale.

        Press SPACE to continue…
    KeyboardComponent inst5_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst5_resp.keys)=='space'
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  Routine in_begin_experiment
    TextComponent beg_exp
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = (beg_exp_resp.keys)=='space'
      text = Press SPACE to begin the experiment.
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    KeyboardComponent beg_exp_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (beg_exp_resp.keys)=='space'
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  Routine iti
    ImageComponent crosshair
      image = stims/whitecrosshair.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine in_end_experiment
    KeyboardComponent end_exp_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (end_exp_resp.keys)=='space'
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    TextComponent end_exp
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = (end_exp_resp.keys)=='space'
      text = Experimenter press SPACE to exit the task.
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  Routine break_
    KeyboardComponent break_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (break_resp.keys)=='space'
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    TextComponent break_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [condition] = (break_resp.keys)=='space'
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      text:
        This is a short break.

        Please remain as still as possible and do not check your phone.

        When you are ready to continue with the experiment, press SPACE.
  Routine sou
    KeyboardComponent sou_resp
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent sou_pic
      image [set every repeat] = $stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent sou_question
      letterHeight = 0.03
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = When did you see this picture?
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    SliderComponent sou_slider
      forceEndRoutine = True
      granularity = 1
      labels = ['Phase 1', 'Phase 2', 'Phase 3']
      letterHeight = 0.03
      pos = (0, -0.325)
      saveStartStop = False
      size = (0.35, 0.05)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3)
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  Routine typ
    KeyboardComponent typ_resp
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent typ_pic
      image [set every repeat] = $stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent typ_question
      letterHeight = 0.03
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = How typical is this picture?
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    SliderComponent typ_slider
      forceEndRoutine = True
      granularity = 1
      labels = ['Not', 'Somewhat', 'Very']
      letterHeight = 0.03
      pos = (0, -0.325)
      saveStartStop = False
      size = (0.6, 0.05)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine val
    ImageComponent val_pic
      image [set every repeat] = $stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent val_question
      letterHeight = 0.03
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = What was your level of VALENCE for this image?
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    SliderComponent val_slider
      forceEndRoutine = True
      granularity = 1
      labels = ['Strongly disliked', 'Neutral', 'Strongly liked']
      letterHeight = 0.03
      pos = (0, -0.325)
      saveStartStop = False
      size = (0.6, 0.05)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine in7
    TextComponent inst7
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = inst7_resp.keys=='space'
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      text:
        You will provide your rating for both VALENCE and AROUSAL using a mouse and a scale.

        For VALENCE, you can answer:

        Strongly disliked
        Neutral
        Strongly liked

        For AROUSAL, you can answer:

        Not at all aroused
        Somewhat aroused
        Very aroused

        Please do your best to ONLY consider your reactions to these types of images DURING the task, and not at other points in your life.

        As with typicality in the last task, you can click anywhere on the scale to describe how you felt about the image on the screen during the task.

        Press SPACE to continue…
    KeyboardComponent inst7_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = inst7_resp.keys=='space'
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  Routine in6
    TextComponent inst6
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst6_resp.keys)=='space'
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    KeyboardComponent inst6_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst6_resp.keys)=='space'
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  Routine in8
    TextComponent inst8
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = inst8_resp.keys=='space'
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      text:
        To recap:

        You will see a picture that you saw on your first visit in the middle of the screen. You will first rate how much you LIKED or DISLIKED the picure during the study, on a scale of strongly disliked to strongly liked. You will then be asked to rate how AROUSED/ACTIVATED the same picture made you, on a scale of not at at all aroused to very aroused.

        Do you have any questions about these instructions?
    KeyboardComponent inst8_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = inst8_resp.keys=='space'
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  Routine prac_iti
    ImageComponent prac_crosshair
      image = stims/whitecrosshair.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine prac_sou
    TextComponent prac_when
      letterHeight = 0.03
      pos = (0, .32)
      startVal [time (s)] = 0.0
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      text:
        When did you see this picture?
        (For this example, respond as if this were a picture you saw when you were getting shocked.)
    ImageComponent pracwhen_image
      image = stims/banana.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent pracwhen_code
      Code Type = Py
      End Routine:
        if pracsou_slider.rating in [2]:
            soufeedback_text.text = 'Correct! Phase 2 was when you received shocks.\n\nPress any button to continue...'
        elif pracsou_slider.rating in [1]:
                soufeedback_text.text = 'Incorrect. Remember, Phase 1 was when you were classifying animals and tools.\n\nPress any space to continue...'
        elif pracsou_slider.rating in [3]:
                soufeedback_text.text = 'Remember, Phase 3 was when you received no shocks.\n\nPress space to continue...'
    SliderComponent pracsou_slider
      forceEndRoutine = True
      granularity = 1
      labels = ['Phase 1', 'Phase 2', 'Phase 3']
      letterHeight = 0.03
      pos = (0, -0.325)
      saveStartStop = False
      size = (0.35, 0.05)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3)
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  Routine prac_val
    ImageComponent pracval_image
      image = stims/banana.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent pracval_resp
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent pracval_question
      letterHeight = 0.03
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = What was your level of VALENCE for this image?
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    SliderComponent pracval_slider
      forceEndRoutine = True
      granularity = 0
      labels = ['Strongly disliked', 'Neutral', 'Strongly liked']
      letterHeight = 0.03
      pos = (0, -0.325)
      saveStartStop = False
      size = (0.6, 0.05)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine sou_feedback
    KeyboardComponent soufeedback_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = soufeedback_resp.keys=='space'
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    TextComponent soufeedback_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = soufeedback_resp.keys=='space'
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  Routine prep_practrials
    TextComponent inst_practrials
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = inst_practrials_resp.keys=='space'
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      text:
        We are now going to do a practice trial so you can become familiar with this task.

        Press SPACE to begin the practice trial.
    KeyboardComponent inst_practrials_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = inst_practrials_resp.keys=='space'
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  Routine typ_feedback
    TextComponent typfeedback_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = typfeedback_resp.keys=='space'
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    KeyboardComponent typfeedback_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = typfeedback_resp.keys=='space'
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  Routine val_feedback
    KeyboardComponent valfeedback_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = valfeedback_resp.keys=='space'
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    TextComponent valfeedback_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [condition] = valfeedback_resp.keys=='space'
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      text:
        Great! The number you pressed should reflect how much you liked the image during the task.

        If you have any questions about this task, ask your experimenter now.
  Routine big_iti
    ImageComponent long_crosshair
      image = stims/whitecrosshair.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine prac_arousal
    ImageComponent practyp_image
      image = stims/banana.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent practyp_resp
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent practyp_question
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = What was your level of AROUSAL/ACTIVATION for this image?
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    SliderComponent practyp_slider
      forceEndRoutine = True
      granularity = 1
      labels = ['Not', 'Somewhat', 'Very']
      letterHeight = 0.03
      pos = (0, -0.325)
      saveStartStop = False
      size = (0.6, 0.05)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine arousal_feedback
    KeyboardComponent prac_arousal_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent prac_arousal_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Great!

        Your answer should have reflected how physiologically aroused/activated the picture made you feel during the task.

        Do you have any questions about this task? If so, please ask your experimenter now.
  Routine arousal
    ImageComponent arousal_pic
      image [set every repeat] = $stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent arousal_question
      letterHeight = 0.03
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = What was your level of AROUSAL/ACTIVATION for this image?
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    SliderComponent arousal_slider
      forceEndRoutine = True
      granularity = 0
      labels = ['Not aroused', 'Somewhat aroused', 'Very aroused']
      letterHeight = 0.03
      pos = (0, -0.325)
      size = (0.6, 0.05)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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Flow
  Routine in1
  Routine in2
  Routine in7
  Routine in8
  Routine prep_practrials
  Routine prac_iti
  Routine prac_val
  Routine val_feedback
  Routine prac_iti
  Routine prac_arousal
  Routine arousal_feedback
  Routine in_begin_experiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $f'data/{bidsID}/{bidsID}_ses-2_task-arouval_events-input.csv'
    loopType = sequential
    nReps = 1
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    Routine big_iti
    Routine val
    Routine iti
    Routine arousal
  LoopTerminator trials
  Routine in_end_experiment
